# DERIVED FIXTURE — do not hand-edit.
# Source: RuleWorld/RuleHub Tutorials/NativeTutorials/Creamer2012/Creamer_2012.bngl
# Transform: all 542 parameters constant-folded to literals (NFsim cannot
#   evaluate the source's chained rate-constant expressions); seed
#   populations (*_tot) scaled x0.01; NFsim actions block appended.
# Purpose: simulator-parity test fixture (subprocess BNG2.pl vs bngsim).
begin parameters

NA 6.0221415e+23
Vo 1e-10

#Initial values

EGF_tot 3011.07075
HRG_tot 3011.07075
EGFR_tot 4276.72520173064
ErbB2_tot 142.093237149675
ErbB3_tot 1748.43554666751
ErbB4_tot 891.594202782983
p52Shc1_tot 601.531854462274
Grb2_tot 591.055062496997
Sos1_tot 409.301535229042
Gab1_tot 480.466223642856
PI3K_tot 3567.31320547328
PDK1_tot 8928.80892502848
Akt1_tot 3401.7537819372
RAS_tot 8657.18002843658
p120RasGAP_tot 932.786886419808
Raf1_tot 480.188361349246
MEK1_tot 663.956495470586
ERK2_tot 6163.94706849877


#Setting K values

EGFequil1 1.82539211740452e-06
EGFequil2 3.2439588203041e-06
EGFequil3 2.88434511422028e-06

HRG3equil1 2.7585877061741e-06
HRG3equil2 3.416923653523e-05
HRG3equil3 3.03813568286261e-05

HRG4equil1 3.55574858868965e-06
HRG4equil2 3.58838215596531e-05
HRG4equil3 3.1905869071863e-05

EGFkp1 0
EGFkp2 0
EGFkp3 0

EGFkm1 0.917762528080067
EGFkm2 0.406190050680118
EGFkm3 0.0980573627199459

HRG3kp1 0
HRG3kp2 0
HRG3kp3 0

HRG3km1 0.0816279034087813
HRG3km2 0.160456213128985
HRG3km3 0.513966254148249

HRG4kp1 0
HRG4kp2 0
HRG4kp3 0

HRG4km1 0.810691956671343
HRG4km2 0.1422008800615
HRG4km3 0.242316545614977

DimEquil1 7.46844655792076e-06
DimEquil2 1.32723993132966e-05
DimEquil4 1.07917975274395e-05
DimEquil6 2.03930204638664e-05
DimEquil7 3.62410454036934e-05
DimEquil10 0.000108598068769473
DimEquil11 0.000192992869692914
DimEquil15 1.94228835713301e-05
DimEquil17 1.94705778166261e-06
DimEquil19 0.000155144541042225
DimEquil20 0.00192169729030429
DimEquil22 1.11274072826825e-05
DimEquil23 0.000137829589617487
DimEquil26 1.19072991189906e-05
DimEquil27 0.000120165806492167

Dimkp1 5.0959890629278e-06
Dimkp2 1.1420187713272e-05
Dimkp3 1.11340894395853e-05
Dimkp4 3.55124048645837e-07
Dimkp5 6.92971885573496e-06
Dimkp6 5.93863482345085e-07
Dimkp7 1.48678341848209e-06
Dimkp8 0.000178418842135209
Dimkp9 2.90027169057293e-05
Dimkp10 5.95858524293305e-06
Dimkp11 4.04657996013663e-05
Dimkp12 0.000315000981618733
Dimkp13 0.000167308614588118
Dimkp14 9.40444138151105e-07
Dimkp15 8.64565481767477e-06
Dimkp16 5.39140980464779e-05
Dimkp17 6.60964194053378e-07
Dimkp18 1.46138563964643e-06
Dimkp19 2.34931041558104e-06
Dimkp20 0.000124511859651721
Dimkp21 0.00165689457673641
Dimkp22 9.44327814569465e-06
Dimkp23 9.11335736056244e-05
Dimkp24 0.000103260234702406
Dimkp25 5.12010159949293e-05
Dimkp26 2.43135131855894e-06
Dimkp27 8.76353465827731e-05
Dimkp28 0.000801258063270783


Dimkm1 0.682335881150971
Dimkm2 0.860446362688242
Dimkm3 0.530901820046591
Dimkm4 0.032906848719399
Dimkm5 0.361328871705183
Dimkm6 0.0291209182767864
Dimkm7 0.0410248490881162
Dimkm8 0.706334928569754
Dimkm9 0.5064620571136
Dimkm10 0.054868243150637
Dimkm11 0.209675101809484
Dimkm12 0.287423426816554
Dimkm13 0.548638129462967
Dimkm14 0.0535056553608581
Dimkm15 0.445127253423715
Dimkm16 0.224099123790756
Dimkm17 0.339468196721401
Dimkm18 0.0743735228789512
Dimkm19 0.0151427204579608
Dimkm20 0.0647926498517387
Dimkm21 0.0782869781142506
Dimkm22 0.848650355450826
Dimkm23 0.661204708354308
Dimkm24 0.919541811794608
Dimkm25 0.0337299538300942
Dimkm26 0.204189992563573
Dimkm27 0.729286884022918
Dimkm28 0.743108065474286


Intkp1 0.0832705126548996
Intkp15 0.00586246294682792

iLigkp1 0.893979864006803
iLigkp2 0.756616609711335

iLigkp3 0.0140929275291501
iLigkp4 0.0646661221517235

iDimkp1 0.035207168888922
iDimkp2 0.917315380364937
iDimkp3 0.793734840774044
iDimkp4 0.0978655334522932
iDimkp5 0.365206163171712
iDimkp6 0.686255010679577
iDimkp7 0.199168704665789
iDimkp8 0.096335351868629
iDimkp9 0.787528140525939
iDimkp10 0.0166421484864486

Phosphokp1 0.888772107233018
Phosphokp2 0.42878246307489
Phosphokp3 0.0195396201245302
Phosphokp4 0.200161517127765
Phosphokp5 0.706003182769046
Phosphokp6 0.076616659390412
Phosphokp7 0.180218044939915
Phosphokp8 0.434778121114391
Phosphokp9 0.639089429079519
Phosphokp10 0.059756050915588
Phosphokp11 0.253799737608887
Phosphokp12 0.0563302566441462
Phosphokp13 0.282790620799852
Phosphokp14 0.122324552773364
Phosphokp15 0.967835541778362
Phosphokp16 0.0351414620272385
Phosphokp17 0.0521022165483879
Phosphokp18 0.031157068215756
Phosphokp19 0.08443340013154
Phosphokp20 0.0680116300490647
Phosphokp21 0.451367418859485
Phosphokp22 0.0774887216709453
Phosphokp23 0.460083703581773
Phosphokp24 0.205792755059326
Phosphokp25 0.019661113965264
Phosphokp26 0.295134086701501
Phosphokp27 0.907050520292188
Phosphokp28 0.0121049084190338
Phosphokp29 0.0950488082789428
Phosphokp30 0.0935460962603844
Phosphokp31 0.0654846548500461
Phosphokp32 0.394313272466951
Phosphokp33 0.314072666810171
Phosphokp34 0.845442806483862
Phosphokp35 0.699553162146515
Phosphokp36 0.0393438369234849
Phosphokp37 0.014547403805293
Phosphokp38 0.0117107729876903
Phosphokp39 0.0402838224075356
Phosphokp40 0.0278079467363796
Phosphokp41 0.0621195843955167
Phosphokp42 0.0384566849273881
Phosphokp43 0.0653045295503028
Phosphokp44 0.556999926968433
Phosphokp45 0.015472022436839
Phosphokp46 0.0278694500019026
Phosphokp47 0.0572714409115287
Phosphokp48 0.771759002007548
Phosphokp49 0.0601611442493851
Phosphokp50 0.0487347060541873
Phosphokp51 0.0435687421786884
Phosphokp52 0.0118362096686366
Phosphokp53 0.636787651207112
Phosphokp54 0.354646060845124
Phosphokp55 0.590317591027224
Phosphokp56 0.084467134352829

Phosphokm1 0.00726993260956493
Phosphokm2 0.0974974910327381
Phosphokm3 0.268584632202874
Phosphokm4 0.550094046126816
Phosphokm5 0.767126639405035
Phosphokm6 0.00275612797520029
Phosphokm7 0.00685030301720076
Phosphokm8 0.0487439992623973
Phosphokm9 0.572269724841397
Phosphokm10 0.944031999570728
Phosphokm11 0.0881635543298421
Phosphokm12 0.0665205478076501
Phosphokm13 0.073601652035394
Phosphokm14 0.15084976290579
Phosphokm15 0.0274034930234802
Phosphokm16 0.0479850299988658
Phosphokm17 0.00367233415392832
Phosphokm18 0.0713755713699078
Phosphokm19 0.0120814195649541
Phosphokm20 0.0591549834797695

Grb2kp1 9.48751042996452e-06
Grb2kp2 4.49259489482017e-07
Grb2kp3 6.03697072678887e-06
Grb2kp4 7.26714190078701e-07
Grb2kp5 7.80974367513346e-06

Grb2km1 0.0674470404588556
Grb2km2 0.321266715315215
Grb2km3 0.92695034884224
Grb2km4 0.0127959374406095
Grb2km5 0.721220480153556

Shc1kp0 1.97883551485319e-07
Shc1kp1 4.57411536575194e-06
Shc1kp2 4.74191085720764e-06
Shc1kp3 3.28710008853551e-06
Shc1kp4 4.34278757626282e-07
Shc1kp5 4.57221757547808e-06
Shc1kp6 5.72021770430524e-06
Shc1kp7 3.23935077662424e-07
Shc1kp8 9.25660200452455e-06

Shc1km0 0.0449575735437162
Shc1km1 0.0667230763160359
Shc1km2 0.0579656246540662
Shc1km3 0.747800677001061
Shc1km4 0.951265970211182
Shc1km5 0.650096102370838
Shc1km6 0.155457060924141
Shc1km7 0.124736961289233
Shc1km8 0.383019454603652

Shc1kp9 0.569833036091512
Shc1kp10 0.559482986809144
Shc1kp11 0.242858250499268
Shc1kp12 0.015443440933692
Shc1kp13 0.989657844783909
Shc1kp14 0.0153725031821727
Shc1kp15 0.0422356483806294
Shc1kp16 0.744568988338312
Shc1kp17 0.0114399259149258
Shc1kp18 0.663532129002988
Shc1kp19 0.085178640861298
Shc1kp20 0.594148145316552
Shc1kp21 0.20700566805906
Shc1kp22 0.623710111799534
Shc1kp23 0.263775121304968
Shc1kp24 0.532149459123519
Shc1kp25 0.949394026611117
Shc1kp26 0.4953415509737
Shc1kp27 0.76819206332508
Shc1kp28 0.485997292760425
Shc1kp29 0.782487101445372
Shc1kp30 0.300808468223011
Shc1kp31 0.0265779406020073
Shc1kp32 0.0529010839763077


Shc1km14 0.0888151462022222

Scafoldkp1 7.81993810926309e-07
Scafoldkp2 5.2905293019769e-06
Scafoldkp3 2.64526465098845e-05

Scafoldkm1 0.339662220127485
Scafoldkm2 0.0638794564439524
Scafoldkm3 0.0638794564439524


Sos1kp1 2.83307444159129e-06
Sos1kp3 1.10049191751608e-06

Sos1kp5 0.0232751420105001
Sos1kp6 0.1163757100525
Sos1kp7 0.0368445191357574
Sos1kp8 0.158767045993943
Sos1kp9 0.0779377967231056

Sos1km5 0.0382133045165284
Sos1km6 0.191066522582642


MAPKkp1 2.34858647510049e-06
MAPKkp2 0.797187030086059
MAPKkp3 0.376471948496902
MAPKkp4 0.840146299281042
MAPKkp5 0.865474093754534
MAPKkp6 0.0825953667549936
MAPKkp7 0.0741979697938558
MAPKkp8 0.00137135935836113
MAPKkp9 8.18059543701685e-07
MAPKkp10 8.54707689482359e-06
MAPKkp11 0.0911852147803069
MAPKkp12 0.950469680832043
MAPKkp13 0.0420150542888183
MAPKkp15 0.0233197003501971
MAPKkp16 8.50946608676458e-07
MAPKkp17 0.462874983163874
MAPKkp18 0.0335431298757868
MAPKkp19 0.332559533601363
MAPKkp20 0.0209334798311488
MAPKkp21 3.06698724199856e-07
MAPKkp22 8.88161417106301e-06
MAPKkp23 7.08681212084929e-06
MAPKkp24 4.08615417714418e-07
MAPKkp25 4.90729612515253e-06
MAPKkp26 1.84517732382585e-06
MAPKkp27 2.24786074034722e-06
MAPKkp28 1.96454339477236e-07
MAPKkp29 2.22526846482702e-07
MAPKkp30 1.90968360095593e-06
MAPKkp31 7.79954799619554e-07
MAPKkp32 7.75963929608389e-07
MAPKkp33 0.0259665864412602
MAPKkp34 0.0243591083356245
MAPKkp35 0.0716980303326022
MAPKkp36 0.249429517376035
MAPKkp37 0.0855283324348136
MAPKkp38 0.0445729674507919
MAPKkp39 0.42054915619633
MAPKkp40 0.0734095564918618
MAPKkp41 0.0110316513094398
MAPKkp42 0.0588228995495206
MAPKkp43 0.961443776159791
MAPKkp44 0.0554780338440048
MAPKkp45 0.00448285458762001
MAPKkp46 0.0180883788097742
MAPKkp47 0.00499203801450802
MAPKkp48 0.00831336309299819
MAPKkp49 0.0856531321402417
MAPKkp50 0.451531525768462
MAPKkp51 0.0241716382509588
MAPKkp52 0.480306028262771


Gab1kp1 1.96995906486126e-06
Gab1kp3 0.126884248252077
Gab1kp4 0.0659955402545501
Gab1kp5 0.274649622535037
Gab1kp6 0.043149249204576
Gab1kp7 0.743735567137946
Gab1kp8 0.509433307106832
Gab1kp9 0.784981187122992
Gab1kp10 0.0958526974679023
Gab1kp11 0.689178573211149
Gab1kp12 0.968556225363977
Gab1kp13 0.0943317263519674
Gab1kp14 0.0494750548020704
Gab1kp15 0.0806143925513339
Gab1kp16 0.219269118931788
Gab1kp17 0.0189942763529712
Gab1kp18 0.189528365333723
Gab1kp19 0.0603030348115124
Gab1kp20 0.0354071892177262
Gab1kp21 0.399232860454623
Gab1kp22 0.0563319907552716
Gab1kp23 0.0310843424122953
Gab1kp24 0.0684002889697763
Gab1kp25 0.639876833170325
Gab1kp26 0.0982736084289934
Gab1kp27 0.0918433441172982
Gab1kp28 0.382822878829575
Gab1kp29 0.821161423705763
Gab1kp30 0.0920446819241408
Gab1kp31 0.221644107443666
Gab1kp32 0.0363754251476098
Gab1kp33 0.023667792426341
Gab1kp34 0.0444827588111809
Gab1kp35 0.308440990344997
Gab1kp36 0.0554549199955773
Gab1kp37 0.774552310273276
Gab1kp38 0.0750355932645846
Gab1kp39 0.0576021606139506
Gab1kp40 0.453089771642914
Gab1kp41 0.0899505991878266
Gab1kp42 0.378959951192263
Gab1kp43 0.650754783263528
Gab1kp44 0.681419244007412
Gab1kp45 0.189643033383857
Gab1kp46 0.0102351033220879
Gab1kp47 0.473869586053684
Gab1kp48 0.245137939979401
Gab1kp49 0.744917984527444
Gab1kp50 0.0126045363101139
Gab1kp51 0.316955880399047
Gab1kp52 0.0433161963713894
Gab1kp53 0.0517343683338817
Gab1kp54 0.0748601277549528
Gab1kp55 0.692340425584058
Gab1kp56 0.0407780811638111
Gab1kp57 0.0140041104876053
Gab1kp58 0.0948753480457526
Gab1kp59 0.75016080657968
Gab1kp60 0.0366672032784976
Gab1kp61 0.0179009642048845
Gab1kp62 0.0638332656408699
Gab1kp63 0.0684007275429656
Gab1kp64 0.10710450029589
Gab1kp65 0.0541563482962238
Gab1kp66 0.884462541321437
Gab1kp67 0.747350965386988
Gab1kp68 0.0565594739491638
Gab1kp69 0.717689305501494
Gab1kp70 0.179330734762095
Gab1kp71 0.688931712557604
Gab1kp72 0.0922136524885445
Gab1kp73 0.298344535037069
Gab1kp74 0.0764644004450076
Gab1kp75 0.093958164303171
Gab1kp76 0.88252420049796
Gab1kp77 0.265565223728305
Gab1kp78 0.84993010543607
Gab1kp79 0.993832547054416
Gab1kp80 0.0285970169779949
Gab1kp81 0.860664808545255
Gab1kp82 0.364938764618722
Gab1kp83 0.0397312566269352
Gab1kp84 0.320288574330021
Gab1kp85 0.943054858692847
Gab1kp86 0.151265490820168
Gab1kp87 0.835850377271163
Gab1kp88 0.039780775924408
Gab1kp89 0.630932503134102
Gab1kp90 0.0332391948687405
Gab1kp91 0.0902017698365222
Gab1kp92 0.537650024214315
Gab1kp93 0.152462712529331
Gab1kp94 0.0744822529477142
Gab1kp95 0.0381255548764085
Gab1kp96 0.0672974270318821
Gab1kp97 0.0572918654990821
Gab1kp98 0.545264200264478
Gab1kp99 0.0784350181988844
Gab1kp100 0.0134235843242573
Gab1kp101 0.365112322534793
Gab1kp102 0.442764099548992
Gab1kp103 0.382546347527449
Gab1kp104 0.635883074076855
Gab1kp105 0.0259756886335555
Gab1kp106 0.867259547156402
Gab1kp107 0.486156447305251
Gab1kp108 0.0377418118675064
Gab1kp109 0.390671913515649
Gab1kp110 0.0356725621880395
Gab1kp111 0.382074278974778
Gab1kp112 0.0525107067249229
Gab1kp113 0.539435189730705
Gab1kp114 0.934735231509552
Gab1kp115 0.0145329501078618
Gab1kp116 0.0851311537687985
Gab1kp117 0.354169909715336
Gab1kp118 0.433863429051934
Gab1kp119 0.339300906504241
Gab1kp120 0.385128293076843
Gab1kp121 0.036412969122229
Gab1kp122 0.342139323434344
Gab1kp123 0.125890011675489
Gab1kp124 0.194813470549195
Gab1kp125 0.098003934982591
Gab1kp126 0.0492423817966665
Gab1kp127 0.976560811665314
Gab1kp128 0.0392729076406397
Gab1kp129 0.553728123038621
Gab1kp130 0.0769883583742472
Gab1kp131 0.0727273779712493
Gab1kp132 0.0273106646626792
Gab1kp133 0.893155681304097
Gab1kp134 0.045877312169635
Gab1kp135 0.0202635815571568
Gab1kp136 0.365005005212328
Gab1kp137 0.0362453153129877
Gab1kp138 0.656010933793874
Gab1kp139 0.0120687516377745
Gab1kp140 0.90068597109921
Gab1kp141 0.794889774029508
Gab1kp142 0.0147879843065186
Gab1kp143 0.382145997625815
Gab1kp144 0.739492359635028
Gab1kp145 0.314858173375256
Gab1kp146 0.907136916358093
Gab1kp147 0.213946826210275
Gab1kp148 0.222305968575301
Gab1kp149 0.814790581270913
Gab1kp150 0.352672941805116
Gab1kp151 0.23375040442304
Gab1kp152 0.0375503845672807
Gab1kp153 0.222274772107301
Gab1kp154 0.084191964204494
Gab1kp155 0.0854033761596293

Gab1kp156 1.46657846706313e-06
Gab1kp157 6.834203762122e-07
Gab1kp158 2.28068860916886e-07
Gab1kp159 2.38343153678147e-06
Gab1kp160 7.4594943271976e-06
Gab1kp161 4.58433700010636e-06
Gab1kp162 0.921239244666731
Gab1kp163 0.483857466703586
Gab1kp164 0.368569830054378
Gab1kp165 0.0304402959768407
Gab1kp166 0.014605078022521
Gab1kp167 0.15471681936429
Gab1kp168 0.0942829803930488
Gab1kp169 0.709585670734958
Gab1kp170 0.0999307828310231
Gab1kp171 4.60012468602565e-07
Gab1kp172 0.0462955624807586


PI3Kkp1 5.88410107982645e-07
PI3Kkp2 9.80542618619103e-06
PI3Kkp3 6.66744738668615e-07
PI3Kkp4 0.310295546030824
PI3Kkp5 8.27527892544981e-06
PI3Kkp6 0.0444842583219685

PI3Kkp7 1.94595846478239e-06
PI3Kkp8 1.76813220419643e-06
PI3Kkp9 6.386829800952e-06
PI3Kkp10 5.15064097908112e-06
PI3Kkp11 7.85287947262356e-07
PI3Kkp12 4.37909434779328e-06
PI3Kkp13 4.60027889585098e-07

PI3Kkm7 0.70508917514033
PI3Kkm8 0.672236279174069
PI3Kkm9 0.0497861425615832
PI3Kkm10 0.0141917372721451
PI3Kkm11 0.577649463506566
PI3Kkm12 0.0878805058758934
PI3Kkm13 0.017532444673634

PIP3kp1 0.0548782230800754
PIP3kp1_5 0.274391115400377
PIP3kp3 0.00967988792384551


Akt1kp1 9.88533437962741e-07
Akt1kp2 2.21983420789547e-06
Akt1kp3 1.02753819132869e-06
Akt1kp4 0.50119136591926
Akt1kp5 0.834868759634759
Akt1kp6 0.0361676724413996
Akt1kp7 3.69211236144935e-07
Akt1kp8 0.0262409039589227
Akt1kp9 0.0476384581518204
Akt1kp10 0.0205533084211891
Akt1kp11 0.0536964405281211
Akt1kp12 0.00274620431360807


Akt1km1 0.0173047023274262
Akt1km2 0.143226416524573


rGAPkp1 7.97543429085357e-07
rGAPkp2 7.27732102199911e-06
rGAPkp3 0.0789216962179904
rGAPkp4 0.41163628948874

rGAPkm1 0.963672004244575
end parameters


begin molecule types

# Each species needs a location tag (outside,membrane,cytoplasms,destroyed etc..)
EGF(EGFL,deg~F~T,loc~Ex~En)
HRG(EGFL,deg~F~T,loc~Ex~En)
EGFR(I_III,II,T669~O~P,Y992~O~P,Y1068~O~P,Y1086~O~P,Y1114~O~P,Y1148~O~P,Y1173~O~P,loc~M~En)
ErbB2(II,Y1139~O~P,Y1196~O~P,Y1222~O~P,Y1248~O~P,loc~M~En)
ErbB3(I_III,II,Y1054~O~P,Y1197~O~P,Y1222~O~P,Y1260~O~P,Y1276~O~P,Y1289~O~P,Y1328~O~P,loc~M~En)
ErbB4(I_III,II,Y1056~O~P,Y1188~O~P,Y1242~O~P,loc~M~En)
p52Shc1(PTB,Y317~O~P,loc~C)
Grb2(SH2r,SH2s,cSH3,nSH3,loc~C)
Sos1(PRS,REM,GEF,S1132~O~P,S1167~O~P,S1178~O~P,S1193~O~P,loc~C)
#S581 means S551, Y619 means Y627, Y657 means Y659
Gab1(PH,PRS1_PRS2,T312~O~P,S381~O~P,Y447~O~P,S454~O~P,Y472~O~P,T476~O~P,S581~O~P,S597~O~P,Y619~O~P,Y657~O~P,loc~C)
PI3K(lipid_kinase,R_p85_nSH2_cSH2,G_p85_nSH2_cSH2,p110_RBD,loc~C)
PIP3(C3P,two~F~T,loc~M)
PDK1(PH,STkinase,loc~C)
Akt1(PH,STkinase,T308~O~P,S473~O~P,loc~C)
KRas(GTPase,g~GDP~GTP,loc~M)
p120RasGAP(nSH2,GAP)
Raf1(RBD,STkinase,S29~O~P,S43~O~P,S259~O~P,S289~O~P,S296~O~P,S301~O~P,S338~O~P,Y341~O~P,S471~O~P,T491~O~P,S494~O~P,S642~O~P,loc~C)
MEK1(delta,S218~O~P,S222~O~P,T292~O~P,loc~C)
ERK2(CD,STkinase,T185~O~P,Y187~O~P,loc~C)

end molecule types



begin species

EGF(EGFL,deg~F,loc~Ex)	EGF_tot
HRG(EGFL,deg~F,loc~Ex) HRG_tot
EGFR(I_III,II,T669~O,Y992~O,Y1068~O,Y1086~O,Y1114~O,Y1148~O,Y1173~O,loc~M)	EGFR_tot
ErbB2(II,Y1139~O,Y1196~O,Y1222~O,Y1248~O,loc~M)	ErbB2_tot
ErbB3(I_III,II,Y1054~O,Y1197~O,Y1222~O,Y1260~O,Y1276~O,Y1289~O,Y1328~O,loc~M)	ErbB3_tot
ErbB4(I_III,II,Y1056~O,Y1188~O,Y1242~O,loc~M)    ErbB4_tot
p52Shc1(PTB,Y317~O,loc~C)	p52Shc1_tot
Grb2(SH2r,SH2s,cSH3,nSH3,loc~C)	Grb2_tot
Sos1(PRS,REM,GEF,S1132~O,S1167~O,S1178~O,S1193~O,loc~C)	Sos1_tot
Gab1(PH,PRS1_PRS2,T312~O,S381~O,Y447~O,S454~O,Y472~O,T476~O,S581~O,S597~O,Y619~O,Y657~O,loc~C)	Gab1_tot
PI3K(lipid_kinase,G_p85_nSH2_cSH2,R_p85_nSH2_cSH2,p110_RBD,loc~C)	PI3K_tot
PIP3(C3P,two~F,loc~M) 0
PDK1(PH,STkinase,loc~C)	PDK1_tot
Akt1(PH,STkinase,T308~O,S473~O,loc~C)	Akt1_tot
KRas(GTPase,g~GDP,loc~M)	RAS_tot
p120RasGAP(nSH2,GAP)	p120RasGAP_tot
Raf1(RBD,STkinase,S29~O,S43~O,S259~O,S289~O,S296~O,S301~O,S338~O,Y341~O,S471~O,T491~O,S494~O,S642~O,loc~C)	Raf1_tot
MEK1(delta,S218~O,S222~O,T292~O,loc~C)	MEK1_tot
ERK2(CD,STkinase,T185~O,Y187~O,loc~C)	ERK2_tot

end species

#Species that are being observed

begin observables
Molecules EGFREGFR  EGFR(II!1,loc~M).EGFR(II!1,loc~M)
Molecules EGFRErbB2 EGFR(II!1,loc~M).ErbB2(II!1,loc~M)
Molecules EGFRErbB3 EGFR(II!1,loc~M).ErbB3(II!1,loc~M)
Molecules EGFRErbB4 EGFR(II!1,loc~M).ErbB4(II!1,loc~M)
Molecules ErbB2ErbB2 ErbB2(II!1,loc~M).ErbB2(II!1,loc~M)
Molecules ErbB2ErbB3 ErbB2(II!1,loc~M).ErbB3(II!1,loc~M)
Molecules ErbB2ErbB4 ErbB2(II!1,loc~M).ErbB4(II!1,loc~M)
Molecules ErbB3ErbB3 ErbB3(II!1,loc~M).ErbB3(II!1,loc~M)
Molecules ErbB3ErbB4 ErbB3(II!1,loc~M).ErbB4(II!1,loc~M)
Molecules ErbB4ErbB4 ErbB4(II!1,loc~M).ErbB4(II!1,loc~M)

Molecules EGFREGFREn  EGFR(II!1,loc~En).EGFR(II!1,loc~En)
Molecules EGFRErbB2En EGFR(II!1,loc~En).ErbB2(II!1,loc~En)
Molecules EGFRErbB3En EGFR(II!1,loc~En).ErbB3(II!1,loc~En)
Molecules EGFRErbB4En EGFR(II!1,loc~En).ErbB4(II!1,loc~En)
Molecules ErbB2ErbB2En ErbB2(II!1,loc~En).ErbB2(II!1,loc~En)
Molecules ErbB2ErbB3En ErbB2(II!1,loc~En).ErbB3(II!1,loc~En)
Molecules ErbB2ErbB4En ErbB2(II!1,loc~En).ErbB4(II!1,loc~En)
Molecules ErbB3ErbB3En ErbB3(II!1,loc~En).ErbB3(II!1,loc~En)
Molecules ErbB3ErbB4En ErbB3(II!1,loc~En).ErbB4(II!1,loc~En)
Molecules ErbB4ErbB4En ErbB4(II!1,loc~En).ErbB4(II!1,loc~En)



Molecules ERK_T185 ERK2(T185~P!?)
Molecules AKT_S473 Akt1(S473~P!?)


Molecules EGFR_669 EGFR(T669~P!?)
Molecules EGFR_992 EGFR(Y992~P!?)
Molecules EGFR_1068 EGFR(Y1068~P!?)
Molecules EGFR_1086 EGFR(Y1086~P!?)
Molecules EGFR_1114 EGFR(Y1114~P!?)
Molecules EGFR_1148 EGFR(Y1148~P!?)
Molecules EGFR_1173 EGFR(Y1173~P!?)

Molecules ErbB2_1139 ErbB2(Y1139~P!?)
Molecules ErbB2_1196 ErbB2(Y1196~P!?)
Molecules ErbB2_1222 ErbB2(Y1222~P!?)
Molecules ErbB2_1248 ErbB2(Y1248~P!?)

Molecules ErbB3_1054 ErbB3(Y1054~P!?)
Molecules ErbB3_1197 ErbB3(Y1197~P!?)
Molecules ErbB3_1222 ErbB3(Y1222~P!?)
Molecules ErbB3_1260 ErbB3(Y1260~P!?)
Molecules ErbB3_1276 ErbB3(Y1276~P!?)
Molecules ErbB3_1289 ErbB3(Y1289~P!?)
Molecules ErbB3_1328 ErbB3(Y1328~P!?)

Molecules ErbB4_1056 ErbB4(Y1056~P!?)
Molecules ErbB4_1188 ErbB4(Y1188~P!?)
Molecules ErbB4_1242 ErbB4(Y1242~P!?)

Molecules pSHC p52Shc1(Y317~P!?)

Molecules Sos1_1132 Sos1(S1132~P!?)
Molecules Sos1_1167 Sos1(S1167~P!?)
Molecules Sos1_1178 Sos1(S1178~P!?)
Molecules Sos1_1193 Sos1(S1193~P!?)

Molecules Gab1_312 Gab1(T312~P!?)
Molecules Gab1_381 Gab1(S381~P!?)
Molecules Gab1_447 Gab1(Y447~P!?)
Molecules Gab1_454 Gab1(S454~P!?)
Molecules Gab1_472 Gab1(Y472~P!?)
Molecules Gab1_476 Gab1(T476~P!?)
Molecules Gab1_581 Gab1(S581~P!?)
Molecules Gab1_597 Gab1(S597~P!?)
Molecules Gab1_619 Gab1(Y619~P!?)
Molecules Gab1_657 Gab1(Y657~P!?)


Molecules Raf1_29 Raf1(S29~P!?)
Molecules Raf1_43 Raf1(S43~P!?)
Molecules Raf1_259 Raf1(S259~P!?)
Molecules Raf1_289 Raf1(S289~P!?)
Molecules Raf1_296 Raf1(S296~P!?)
Molecules Raf1_301 Raf1(S301~P!?)
Molecules Raf1_338 Raf1(S338~P!?)
Molecules Raf1_341 Raf1(Y341~P!?)
Molecules Raf1_471 Raf1(S471~P!?)
Molecules Raf1_491 Raf1(T491~P!?)
Molecules Raf1_494 Raf1(S494~P!?)
Molecules Raf1_642 Raf1(S642~P!?)

Molecules MEK1_218 MEK1(S218~P!?)
Molecules MEK1_222 MEK1(S222~P!?)
Molecules MEK1_292 MEK1(T292~P!?)

Molecules pERK_Y187 ERK2(Y187~P!?)

Molecules AKT_T308 Akt1(T308~P!?)
end observables


#######################   RULES BEGIN HERE   #######################
begin reaction rules
############## LIGAND BINDING ##############

# EGF binding to an EGFR monomer
1 EGFR(I_III,II,loc~M) + EGF(EGFL,deg~F,loc~Ex) <-> EGFR(I_III!1,II,loc~M).EGF(EGFL!1,deg~F,loc~Ex)     EGFkp1,EGFkm1

# HRG binding to an ErbB3 monomer
2 ErbB3(I_III,II,loc~M) + HRG(EGFL,deg~F,loc~Ex) <-> ErbB3(I_III!1,II,loc~M).HRG(EGFL!1,deg~F,loc~Ex)     HRG3kp1,HRG3km1

# HRG binding to an ErbB4 monomer
3 ErbB4(I_III,II,loc~M) + HRG(EGFL,deg~F,loc~Ex) <-> ErbB4(I_III!1,II,loc~M).HRG(EGFL!1,deg~F,loc~Ex)     HRG4kp1,HRG4km1


#EGF binding to an EGFR homodimer
4 EGFR(I_III,II!1,loc~M).EGFR(I_III,II!1,loc~M) + EGF(EGFL,deg~F,loc~Ex) <-> EGFR(I_III,II!1,loc~M).EGFR(I_III!2,II!1,loc~M).EGF(EGFL!2,deg~F,loc~Ex)     EGFkp2,EGFkm2
5 EGF(EGFL!2,deg~F,loc~Ex).EGFR(I_III!2,II!1,loc~M).EGFR(I_III,II!1,loc~M) + EGF(EGFL,deg~F,loc~Ex) <-> EGF(EGFL!2,deg~F,loc~Ex).EGFR(I_III!2,II!1,loc~M).EGFR(I_III!3,II!1,loc~M).EGF(EGFL!3,deg~F,loc~Ex)     EGFkp3,EGFkm3

#EGF binding to an EGFR-ErbB2 heterodimer
6 ErbB2(II!1,loc~M).EGFR(I_III,II!1,loc~M) + EGF(EGFL,deg~F,loc~Ex) <-> ErbB2(II!1,loc~M).EGFR(I_III!2,II!1,loc~M).EGF(EGFL!2,deg~F,loc~Ex)     EGFkp2,EGFkm2

#Ligand binding to an EGFR-ErbB3 heterodimer
7 EGF(EGFL,deg~F,loc~Ex) + EGFR(I_III,II!1,loc~M).ErbB3(I_III,II!1,loc~M) <-> EGF(EGFL!2,deg~F,loc~Ex).EGFR(I_III!2,II!1,loc~M).ErbB3(I_III,II!1,loc~M)      EGFkp2,EGFkm2
8 EGFR(I_III,II!1,loc~M).ErbB3(I_III,II!1,loc~M) + HRG(EGFL,deg~F,loc~Ex) <-> EGFR(I_III,II!1,loc~M).ErbB3(I_III!2,II!1,loc~M).HRG(EGFL!2,deg~F,loc~Ex)     HRG3kp2,HRG3km2
9 EGF(EGFL!2,deg~F,loc~Ex).EGFR(I_III!2,II!1,loc~M).ErbB3(I_III,II!1,loc~M) + HRG(EGFL,deg~F,loc~Ex) <-> EGF(EGFL!2,deg~F,loc~Ex).EGFR(I_III!2,II!1,loc~M).ErbB3(I_III!3,II!1,loc~M).HRG(EGFL!3,deg~F,loc~Ex)     HRG3kp3,HRG3km3
10 EGF(EGFL,deg~F,loc~Ex) + EGFR(I_III,II!1,loc~M).ErbB3(I_III!3,II!1,loc~M).HRG(EGFL!3,deg~F,loc~Ex) <-> EGF(EGFL!2,deg~F,loc~Ex).EGFR(I_III!2,II!1,loc~M).ErbB3(I_III!3,II!1,loc~M).HRG(EGFL!3,deg~F,loc~Ex)     EGFkp3,EGFkm3

#Ligand binding to an EGFR-ErbB4 heterodimer
11 EGF(EGFL,deg~F,loc~Ex) + EGFR(I_III,II!1,loc~M).ErbB4(I_III,II!1,loc~M) <-> EGF(EGFL!2,deg~F,loc~Ex).EGFR(I_III!2,II!1,loc~M).ErbB4(I_III,II!1,loc~M)      EGFkp2,EGFkm2
12 EGFR(I_III,II!1,loc~M).ErbB4(I_III,II!1,loc~M) + HRG(EGFL,deg~F,loc~Ex) <-> EGFR(I_III,II!1,loc~M).ErbB4(I_III!2,II!1,loc~M).HRG(EGFL!2,deg~F,loc~Ex)     HRG4kp2,HRG4km2
13 EGF(EGFL!2,deg~F,loc~Ex).EGFR(I_III!2,II!1,loc~M).ErbB4(I_III,II!1,loc~M) + HRG(EGFL,deg~F,loc~Ex) <-> EGF(EGFL!2,deg~F,loc~Ex).EGFR(I_III!2,II!1,loc~M).ErbB4(I_III!3,II!1,loc~M).HRG(EGFL!3,deg~F,loc~Ex)     HRG4kp3,HRG4km3
14 EGF(EGFL,deg~F,loc~Ex) + EGFR(I_III,II!1,loc~M).ErbB4(I_III!3,II!1,loc~M).HRG(EGFL!3,deg~F,loc~Ex) <-> EGF(EGFL!2,deg~F,loc~Ex).EGFR(I_III!2,II!1,loc~M).ErbB4(I_III!3,II!1,loc~M).HRG(EGFL!3,deg~F,loc~Ex)     EGFkp3,EGFkm3


#HRG binding to an ErbB2-ErbB3 heterodimer
15 ErbB2(II!1,loc~M).ErbB3(I_III,II!1,loc~M) + HRG(EGFL,deg~F,loc~Ex) <-> ErbB2(II!1,loc~M).ErbB3(I_III!2,II!1,loc~M).HRG(EGFL!2,deg~F,loc~Ex)     HRG3kp2,HRG3km2

#HRG binding to an ErbB2-ErbB4 heterodimer
16 ErbB2(II!1,loc~M).ErbB4(I_III,II!1,loc~M) + HRG(EGFL,deg~F,loc~Ex) <-> ErbB2(II!1,loc~M).ErbB4(I_III!2,II!1,loc~M).HRG(EGFL!2,deg~F,loc~Ex)     HRG4kp2,HRG4km2


#HRG binding to an ErbB3 homodimer
17 ErbB3(I_III,II!1,loc~M).ErbB3(I_III,II!1,loc~M) + HRG(EGFL,deg~F,loc~Ex) <-> ErbB3(I_III,II!1,loc~M).ErbB3(I_III!2,II!1,loc~M).HRG(EGFL!2,deg~F,loc~Ex)     HRG3kp2,HRG3km2
18 HRG(EGFL!2,deg~F,loc~Ex).ErbB3(I_III!2,II!1,loc~M).ErbB3(I_III,II!1,loc~M) + HRG(EGFL,deg~F,loc~Ex) <-> HRG(EGFL!2,deg~F,loc~Ex).ErbB3(I_III!2,II!1,loc~M).ErbB3(I_III!3,II!1,loc~M).HRG(EGFL!3,deg~F,loc~Ex)     HRG3kp3,HRG3km3

#Ligand binding to an ErbB3-ErbB4 heterodimer
19 ErbB3(I_III,II!1,loc~M).ErbB4(I_III,II!1,loc~M) + HRG(EGFL,deg~F,loc~Ex) <-> ErbB3(I_III,II!1,loc~M).ErbB4(I_III!2,II!1,loc~M).HRG(EGFL!2,deg~F,loc~Ex)     HRG4kp2,HRG4km2
20 HRG(EGFL,deg~F,loc~Ex) + ErbB3(I_III,II!1,loc~M).ErbB4(I_III,II!1,loc~M) <-> HRG(EGFL!2,deg~F,loc~Ex).ErbB3(I_III!2,II!1,loc~M).ErbB4(I_III,II!1,loc~M)     HRG3kp2,HRG3km2
21 HRG(EGFL!2,deg~F,loc~Ex).ErbB3(I_III!2,II!1,loc~M).ErbB4(I_III,II!1,loc~M) + HRG(EGFL,deg~F,loc~Ex) <-> HRG(EGFL!2,deg~F,loc~Ex).ErbB3(I_III!2,II!1,loc~M).ErbB4(I_III!3,II!1,loc~M).HRG(EGFL!3,deg~F,loc~Ex)     HRG4kp3,HRG4km3
22 HRG(EGFL,deg~F,loc~Ex) + ErbB3(I_III,II!1,loc~M).ErbB4(I_III!3,II!1,loc~M).HRG(EGFL!3,deg~F,loc~Ex) <-> HRG(EGFL!2,deg~F,loc~Ex).ErbB3(I_III!2,II!1,loc~M).ErbB4(I_III!3,II!1,loc~M).HRG(EGFL!3,deg~F,loc~Ex)     HRG3kp3,HRG3km3

#HRG binding to an ErbB4 homodimer
23 ErbB4(I_III,II!1,loc~M).ErbB4(I_III,II!1,loc~M) + HRG(EGFL,deg~F,loc~Ex) <-> ErbB4(I_III,II!1,loc~M).ErbB4(I_III!2,II!1,loc~M).HRG(EGFL!2,deg~F,loc~Ex)     HRG4kp2,HRG4km2
24 HRG(EGFL!2,deg~F,loc~Ex).ErbB4(I_III!2,II!1,loc~M).ErbB4(I_III,II!1,loc~M) + HRG(EGFL,deg~F,loc~Ex) <-> HRG(EGFL!2,deg~F,loc~Ex).ErbB4(I_III!2,II!1,loc~M).ErbB4(I_III!3,II!1,loc~M).HRG(EGFL!3,deg~F,loc~Ex)     HRG4kp3,HRG4km3


############## RECEPTOR DIMERIZATION ##############

# EGFR-EGFR
# EGFR-EGFR dimerization with no EGF bound
25 EGFR(I_III,II,loc~M) + EGFR(I_III,II,loc~M) <-> EGFR(I_III,II!1,loc~M).EGFR(I_III,II!1,loc~M)       Dimkp1,Dimkm1

# EGFR-EGFR dimerization with one EGF bound
26 EGFR(I_III!1,II,loc~M).EGF(EGFL!1,loc~Ex) + EGFR(I_III,II,loc~M) <-> EGFR(I_III!1,II!2,loc~M).EGF(EGFL!1,loc~Ex).EGFR(I_III,II!2,loc~M)     Dimkp2,Dimkm2

# EGFR-EGFR dimerization with two EGF bound
27 EGFR(I_III!1,II,loc~M).EGF(EGFL!1,loc~Ex) + EGFR(I_III!2,II,loc~M).EGF(EGFL!2,loc~Ex) <-> EGFR(I_III!1,II!3,loc~M).EGF(EGFL!1,loc~Ex).EGFR(I_III!2,II!3,loc~M).EGF(EGFL!2,loc~Ex)   Dimkp3,Dimkm3


# EGFR-ErbB2
# EGFR-ErbB2 dimerization with no EGF bound
28 EGFR(I_III,II,loc~M) + ErbB2(II,loc~M) <-> EGFR(I_III,II!1,loc~M).ErbB2(II!1,loc~M)       Dimkp4,Dimkm4

# EGFR-ErbB2 dimerization with EGF bound
29 EGFR(I_III!1,II,loc~M).EGF(EGFL!1,loc~Ex) + ErbB2(II,loc~M) <-> EGFR(I_III!1,II!2,loc~M).EGF(EGFL!1,loc~Ex).ErbB2(II!2,loc~M)     Dimkp5,Dimkm5


# EGFR-ErbB3
# EGFR-ErbB3 dimerization with no ligand bound
30 EGFR(I_III,II,loc~M) + ErbB3(I_III,II,loc~M) <-> EGFR(I_III,II!1,loc~M).ErbB3(I_III,II!1,loc~M)       Dimkp6,Dimkm6

# EGFR-ErbB3 dimerization with EGF bound
31 EGFR(I_III!1,II,loc~M).EGF(EGFL!1,loc~Ex) + ErbB3(I_III,II,loc~M) <-> EGFR(I_III!1,II!2,loc~M).EGF(EGFL!1,loc~Ex).ErbB3(I_III,II!2,loc~M)     Dimkp7,Dimkm7

# EGFR-ErbB3 dimerization with HRG bound
32 ErbB3(I_III!1,II,loc~M).HRG(EGFL!1,loc~Ex) + EGFR(I_III,II,loc~M) <-> ErbB3(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex).EGFR(I_III,II!2,loc~M)     Dimkp8,Dimkm8

# EGFR-ErbB3 dimerization with EGF and HRG bound
33 EGFR(I_III!1,II,loc~M).EGF(EGFL!1,loc~Ex) + ErbB3(I_III!2,II,loc~M).HRG(EGFL!2,loc~Ex) <-> EGFR(I_III!1,II!3,loc~M).EGF(EGFL!1,loc~Ex).ErbB3(I_III!2,II!3,loc~M).HRG(EGFL!2,loc~Ex)   Dimkp9,Dimkm9


# EGFR-ErbB4
# EGFR-ErbB4 dimerization with no ligand bound
34 EGFR(I_III,II,loc~M) + ErbB4(I_III,II,loc~M) <-> EGFR(I_III,II!1,loc~M).ErbB4(I_III,II!1,loc~M)       Dimkp10,Dimkm10

# EGFR-ErbB4 dimerization with EGF bound
35 EGFR(I_III!1,II,loc~M).EGF(EGFL!1,loc~Ex) + ErbB4(I_III,II,loc~M) <-> EGFR(I_III!1,II!2,loc~M).EGF(EGFL!1,loc~Ex).ErbB4(I_III,II!2,loc~M)     Dimkp11,Dimkm11

# EGFR-ErbB4 dimerization with HRG bound
36 ErbB4(I_III!1,II,loc~M).HRG(EGFL!1,loc~Ex) + EGFR(I_III,II,loc~M) <-> ErbB4(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex).EGFR(I_III,II!2,loc~M)     Dimkp12,Dimkm12

# EGFR-ErbB4 dimerization with EGF and HRG bound
37 EGFR(I_III!1,II,loc~M).EGF(EGFL!1,loc~Ex) + ErbB4(I_III!2,II,loc~M).HRG(EGFL!2,loc~Ex) <-> EGFR(I_III!1,II!3,loc~M).EGF(EGFL!1,loc~Ex).ErbB4(I_III!2,II!3,loc~M).HRG(EGFL!2,loc~Ex)   Dimkp13,Dimkm13


# ErbB2-ErbB2 dimerization
38 ErbB2(II,loc~M) + ErbB2(II,loc~M) <-> ErbB2(II!1,loc~M).ErbB2(II!1,loc~M)       Dimkp14,Dimkm14


# ErbB2-ErbB3
# ErbB2-ErbB3 dimerization with no ligand bound
39 ErbB2(II,loc~M) + ErbB3(I_III,II,loc~M) <-> ErbB2(II!1,loc~M).ErbB3(I_III,II!1,loc~M)       Dimkp15,Dimkm15

# ErbB2-ErbB3 dimerization with HRG bound
40 ErbB3(I_III!1,II,loc~M).HRG(EGFL!1,loc~Ex) + ErbB2(II,loc~M) <-> ErbB3(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex).ErbB2(II!2,loc~M)     Dimkp16,Dimkm16


# ErbB2-ErbB4
# ErbB2-ErbB4 dimerization with no ligand bound
41 ErbB2(II,loc~M) + ErbB4(I_III,II,loc~M) <-> ErbB2(II!1,loc~M).ErbB4(I_III,II!1,loc~M)       Dimkp17,Dimkm17

# ErbB2-ErbB4 dimerization with HRG bound
42 ErbB4(I_III!1,II,loc~M).HRG(EGFL!1,loc~Ex) + ErbB2(II,loc~M) <-> ErbB4(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex).ErbB2(II!2,loc~M)     Dimkp18,Dimkm18


# ErbB3-ErbB3
# ErbB3-ErbB3 dimerization with no HRG bound
43 ErbB3(I_III,II,loc~M) + ErbB3(I_III,II,loc~M) <-> ErbB3(I_III,II!1,loc~M).ErbB3(I_III,II!1,loc~M)       Dimkp19,Dimkm19

# ErbB3-ErbB3 dimerization with one HRG bound
44 ErbB3(I_III!1,II,loc~M).HRG(EGFL!1,loc~Ex) + ErbB3(I_III,II,loc~M) <-> ErbB3(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex).ErbB3(I_III,II!2,loc~M)     Dimkp20,Dimkm20

# ErbB3-ErbB3 dimerization with two HRG bound
45 ErbB3(I_III!1,II,loc~M).HRG(EGFL!1,loc~Ex) + ErbB3(I_III!2,II,loc~M).HRG(EGFL!2,loc~Ex) <-> ErbB3(I_III!1,II!3,loc~M).HRG(EGFL!1,loc~Ex).ErbB3(I_III!2,II!3,loc~M).HRG(EGFL!2,loc~Ex)   Dimkp21,Dimkm21


# ErbB3-ErbB4
# ErbB3-ErbB4 dimerization with no HRG bound
46 ErbB3(I_III,II,loc~M) + ErbB4(I_III,II,loc~M) <-> ErbB3(I_III,II!1,loc~M).ErbB4(I_III,II!1,loc~M)       Dimkp22,Dimkm22

# ErbB3-ErbB4 dimerization with HRG bound on ErbB3
47 ErbB3(I_III!1,II,loc~M).HRG(EGFL!1,loc~Ex) + ErbB4(I_III,II,loc~M) <-> ErbB3(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex).ErbB4(I_III,II!2,loc~M)     Dimkp23,Dimkm23

# ErbB3-ErbB4 dimerization with HRG bound on ErbB4
48 ErbB3(I_III,II,loc~M) + ErbB4(I_III!1,II,loc~M).HRG(EGFL!1,loc~Ex) <-> ErbB3(I_III,II!2,loc~M).ErbB4(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex)     Dimkp24,Dimkm24

# ErbB3-ErbB4 dimerization with HRG bound on both receptors
49 ErbB3(I_III!1,II,loc~M).HRG(EGFL!1,loc~Ex) + ErbB4(I_III!2,II,loc~M).HRG(EGFL!2,loc~Ex) <-> ErbB3(I_III!1,II!3,loc~M).HRG(EGFL!1,loc~Ex).ErbB4(I_III!2,II!3,loc~M).HRG(EGFL!2,loc~Ex)   Dimkp25,Dimkm25


# ErbB4-ErbB4
# ErbB4-ErbB4 dimerization with no HRG bound
50 ErbB4(I_III,II,loc~M) + ErbB4(I_III,II,loc~M) <-> ErbB4(I_III,II!1,loc~M).ErbB4(I_III,II!1,loc~M)       Dimkp26,Dimkm26

# ErbB4-ErbB4 dimerization with one HRG bound
51 ErbB4(I_III!1,II,loc~M).HRG(EGFL!1,loc~Ex) + ErbB4(I_III,II,loc~M) <-> ErbB4(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex).ErbB4(I_III,II!2,loc~M)     Dimkp27,Dimkm27

# ErbB4-ErbB4 dimerization with two HRG bound
52 ErbB4(I_III!1,II,loc~M).HRG(EGFL!1,loc~Ex) + ErbB4(I_III!2,II,loc~M).HRG(EGFL!2,loc~Ex) <-> ErbB4(I_III!1,II!3,loc~M).HRG(EGFL!1,loc~Ex).ErbB4(I_III!2,II!3,loc~M).HRG(EGFL!2,loc~Ex)   Dimkp28,Dimkm28



############## RECEPTOR INTERNALIZATION ##############

#EGFR-EGFR
#EGFR-EGFR dimers get internalized with two EGF bound
53 EGFR(I_III!1,II!3,loc~M).EGF(EGFL!1,loc~Ex).EGFR(I_III!2,II!3,loc~M).EGF(EGFL!2,loc~Ex) -> EGFR(I_III!1,II!3,loc~En).EGF(EGFL!1,loc~En).EGFR(I_III!2,II!3,loc~En).EGF(EGFL!2,loc~En)	Intkp1

#EGFR-EGFR dimers get internalized with one EGF bound
54 EGFR(I_III!1,II!2,loc~M).EGF(EGFL!1,loc~Ex).EGFR(I_III,II!2,loc~M) -> EGFR(I_III!1,II!2,loc~En).EGF(EGFL!1,loc~En).EGFR(I_III,II!2,loc~En)	Intkp1

#EGFR-EGFR dimers get internalized with no ligand bound
55 EGFR(I_III,II!2,loc~M).EGFR(I_III,II!2,loc~M) -> EGFR(I_III,II!2,loc~En).EGFR(I_III,II!2,loc~En)	Intkp1


#EGFR-ErbB2 dimers get internalized with EGF bound
56 EGFR(I_III!1,II!2,loc~M).EGF(EGFL!1,loc~Ex).ErbB2(II!2,loc~M) -> EGFR(I_III!1,II!2,loc~En).EGF(EGFL!1,loc~En).ErbB2(II!2,loc~En)	Intkp1

#EGFR-ErbB2 dimers get internalized with no ligand bound
57 EGFR(I_III,II!2,loc~M).ErbB2(II!2,loc~M) -> EGFR(I_III,II!2,loc~En).ErbB2(II!2,loc~En)	Intkp1


#EGFR-ErbB3 dimers get internalized with EGF and HRG bound
58 EGFR(I_III!1,II!3,loc~M).EGF(EGFL!1,loc~Ex).ErbB3(I_III!2,II!3,loc~M).HRG(EGFL!2,loc~Ex) -> EGFR(I_III!1,II!3,loc~En).EGF(EGFL!1,loc~En).ErbB3(I_III!2,II!3,loc~En).HRG(EGFL!2,loc~En)	Intkp1

#EGFR-ErbB3 dimers get internalized with HRG bound
59 EGFR(I_III,II!3,loc~M).ErbB3(I_III!2,II!3,loc~M).HRG(EGFL!2,loc~Ex) -> EGFR(I_III,II!3,loc~En).ErbB3(I_III!2,II!3,loc~En).HRG(EGFL!2,loc~En)	Intkp1

#EGFR-ErbB3 dimers get internalized with EGF bound
60 EGFR(I_III!1,II!3,loc~M).EGF(EGFL!1,loc~Ex).ErbB3(I_III,II!3,loc~M) -> EGFR(I_III!1,II!3,loc~En).EGF(EGFL!1,loc~En).ErbB3(I_III,II!3,loc~En)	Intkp1

#EGFR-ErbB3 dimers get internalized with no ligand bound
61 EGFR(I_III,II!3,loc~M).ErbB3(I_III,II!3,loc~M) -> EGFR(I_III,II!3,loc~En).ErbB3(I_III,II!3,loc~En)	Intkp1


#EGFR-ErbB4 dimers get internalized with EGF and HRG bound
62 EGFR(I_III!1,II!3,loc~M).EGF(EGFL!1,loc~Ex).ErbB4(I_III!2,II!3,loc~M).HRG(EGFL!2,loc~Ex) -> EGFR(I_III!1,II!3,loc~En).EGF(EGFL!1,loc~En).ErbB4(I_III!2,II!3,loc~En).HRG(EGFL!2,loc~En)	Intkp1

#EGFR-ErbB4 dimers get internalized with HRG bound
63 EGFR(I_III,II!3,loc~M).ErbB4(I_III!2,II!3,loc~M).HRG(EGFL!2,loc~Ex) -> EGFR(I_III,II!3,loc~En).ErbB4(I_III!2,II!3,loc~En).HRG(EGFL!2,loc~En)	Intkp1

#EGFR-ErbB4 dimers get internalized with EGF bound
64 EGFR(I_III!1,II!3,loc~M).EGF(EGFL!1,loc~Ex).ErbB4(I_III,II!3,loc~M) -> EGFR(I_III!1,II!3,loc~En).EGF(EGFL!1,loc~En).ErbB4(I_III,II!3,loc~En)	Intkp1

#EGFR-ErbB4 dimers get internalized with no ligand bound
65 EGFR(I_III,II!3,loc~M).ErbB4(I_III,II!3,loc~M) -> EGFR(I_III,II!3,loc~En).ErbB4(I_III,II!3,loc~En)	Intkp1


#ErbB2-ErbB2 dimers get internalized
66 ErbB2(II!1,loc~M).ErbB2(II!1,loc~M) -> ErbB2(II!1,loc~En).ErbB2(II!1,loc~En) Intkp1


#ErbB3-ErbB2 dimers get internalized with HRG bound
67 ErbB3(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex).ErbB2(II!2,loc~M) -> ErbB3(I_III!1,II!2,loc~En).HRG(EGFL!1,loc~En).ErbB2(II!2,loc~En)	Intkp1

#ErbB3-ErbB2 dimers get internalized with no ligand bound
68 ErbB3(I_III,II!2,loc~M).ErbB2(II!2,loc~M) -> ErbB3(I_III,II!2,loc~En).ErbB2(II!2,loc~En)	Intkp1


#ErbB4-ErbB2 dimers get internalized with HRG bound
69 ErbB4(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex).ErbB2(II!2,loc~M) -> ErbB4(I_III!1,II!2,loc~En).HRG(EGFL!1,loc~En).ErbB2(II!2,loc~En)	Intkp1

#ErbB4-ErbB2 dimers get internalized with no ligand bound
70 ErbB4(I_III,II!2,loc~M).ErbB2(II!2,loc~M) -> ErbB4(I_III,II!2,loc~En).ErbB2(II!2,loc~En)	Intkp1


#ErbB3-ErbB3 dimers get internalized with two HRG bound
71 ErbB3(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex).ErbB3(I_III!3,II!2,loc~M).HRG(EGFL!3,loc~Ex) -> ErbB3(I_III!1,II!2,loc~En).HRG(EGFL!1,loc~En).ErbB3(I_III!3,II!2,loc~En).HRG(EGFL!3,loc~En)	Intkp1

#ErbB3-ErbB3 dimers get internalized with one HRG bound
72 ErbB3(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex).ErbB3(I_III,II!2,loc~M) -> ErbB3(I_III!1,II!2,loc~En).HRG(EGFL!1,loc~En).ErbB3(I_III,II!2,loc~En)	Intkp1

#ErbB3-ErbB3 dimers get internalized with no HRG bound
73 ErbB3(I_III,II!2,loc~M).ErbB3(I_III,II!2,loc~M) -> ErbB3(I_III,II!2,loc~En).ErbB3(I_III,II!2,loc~En)	Intkp1


#ErbB3-ErbB4 dimers get internalized with two HRG bound
74 ErbB3(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex).ErbB4(I_III!3,II!2,loc~M).HRG(EGFL!3,loc~Ex) -> ErbB3(I_III!1,II!2,loc~En).HRG(EGFL!1,loc~En).ErbB4(I_III!3,II!2,loc~En).HRG(EGFL!3,loc~En)	Intkp1

#ErbB3-ErbB4 dimers get internalized with HRG bound to ErbB3
75 ErbB3(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex).ErbB4(I_III,II!2,loc~M) -> ErbB3(I_III!1,II!2,loc~En).HRG(EGFL!1,loc~En).ErbB4(I_III,II!2,loc~En)	Intkp1

#ErbB3-ErbB4 dimers get internalized with HRG bound to ErbB4
76 ErbB3(I_III,II!2,loc~M).ErbB4(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex) -> ErbB3(I_III,II!2,loc~En).ErbB4(I_III!1,II!2,loc~En).HRG(EGFL!1,loc~En)	Intkp1

#ErbB3-ErbB4 dimers get internalized with no HRG bound to both receptors
77 ErbB3(I_III,II!2,loc~M).ErbB4(I_III,II!2,loc~M) -> ErbB3(I_III,II!2,loc~En).ErbB4(I_III,II!2,loc~En)	Intkp1


#ErbB4-ErbB4 dimers get internalized with two HRG bound
78 ErbB4(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex).ErbB4(I_III!3,II!2,loc~M).HRG(EGFL!3,loc~Ex) -> ErbB4(I_III!1,II!2,loc~En).HRG(EGFL!1,loc~En).ErbB4(I_III!3,II!2,loc~En).HRG(EGFL!3,loc~En)	Intkp1

#ErbB4-ErbB4 dimers get internalized with one HRG bound
79 ErbB4(I_III!1,II!2,loc~M).HRG(EGFL!1,loc~Ex).ErbB4(I_III,II!2,loc~M) -> ErbB4(I_III!1,II!2,loc~En).HRG(EGFL!1,loc~En).ErbB4(I_III,II!2,loc~En)	Intkp1

#ErbB4-ErbB4 dimers get internalized with no HRG bound
80 ErbB4(I_III,II!2,loc~M).ErbB4(I_III,II!2,loc~M) -> ErbB4(I_III,II!2,loc~En).ErbB4(I_III,II!2,loc~En)	Intkp1


#internalized EGFR releases ligand
81 EGFR(I_III!1,loc~En).EGF(EGFL!1,deg~F,loc~En) -> EGFR(I_III,loc~En) + EGF(EGFL,deg~F,loc~En)	iLigkp1

#internalized ErbB3 releases ligand
82 ErbB3(I_III!1,loc~En).HRG(EGFL!1,deg~F,loc~En) -> ErbB3(I_III,loc~En) + HRG(EGFL,deg~F,loc~En)	iLigkp2

#internalized ErbB4 releases ligand
83 ErbB4(I_III!1,loc~En).HRG(EGFL!1,deg~F,loc~En) -> ErbB4(I_III,loc~En) + HRG(EGFL,deg~F,loc~En)	iLigkp3

#internalized ligand gets degraded
84 EGF(EGFL,deg~F,loc~En) -> EGF(EGFL,deg~T,loc~En)	iLigkp4
85 HRG(EGFL,deg~F,loc~En) -> HRG(EGFL,deg~T,loc~En)	iLigkp4


#internalized receptors dissociate
86 EGFR(II!3,loc~En).EGFR(II!3,loc~En) -> EGFR(II,loc~En) + EGFR(II,loc~En)		iDimkp1
87 EGFR(II!2,loc~En).ErbB2(II!2,loc~En) -> EGFR(II,loc~En) + ErbB2(II,loc~En)	iDimkp2
88 EGFR(II!3,loc~En).ErbB3(II!3,loc~En) -> EGFR(II,loc~En) + ErbB3(II,loc~En)	iDimkp3
89 EGFR(II!3,loc~En).ErbB4(II!3,loc~En) -> EGFR(II,loc~En) + ErbB4(II,loc~En)	iDimkp4

90 ErbB2(II!2,loc~En).ErbB2(II!2,loc~En) -> ErbB2(II,loc~En) + ErbB2(II,loc~En)	iDimkp5
91 ErbB2(II!2,loc~En).ErbB3(II!2,loc~En) -> ErbB2(II,loc~En) + ErbB3(II,loc~En)	iDimkp6
92 ErbB2(II!2,loc~En).ErbB4(II!2,loc~En) -> ErbB2(II,loc~En) + ErbB4(II,loc~En)	iDimkp7

93 ErbB3(II!2,loc~En).ErbB3(II!2,loc~En) -> ErbB3(II,loc~En) + ErbB3(II,loc~En)	iDimkp8
94 ErbB3(II!2,loc~En).ErbB4(II!2,loc~En) -> ErbB3(II,loc~En) + ErbB4(II,loc~En)	iDimkp9

95 ErbB4(II!2,loc~En).ErbB4(II!2,loc~En) -> ErbB4(II,loc~En) + ErbB4(II,loc~En)	iDimkp10

#non-dimerized receptors with no ligand bound return to the membrane
96 EGFR(I_III,II,loc~En) -> EGFR(I_III,II,loc~M)	Intkp15
97 ErbB2(II,loc~En) -> ErbB2(II,loc~M)				Intkp15
98 ErbB3(I_III,II,loc~En) -> ErbB3(I_III,II,loc~M)	Intkp15
99 ErbB4(I_III,II,loc~En) -> ErbB4(I_III,II,loc~M)	Intkp15

############## RECEPTOR CROSS-PHOSPHORYLATION ##############

# Receptor Phosphorylation Reactions

# NOTE: The philosophy of these rules is that both ligand binding sites in a dimer must be occupied in order for kinase domains to be active

## EGFR
## (EGFR-EGFR dimers)(992,1068,1086,1114,1148,1173)
## (ErbB2-EGFR dimers)(992,1068,1086,1114,1148,1173)
## (ErbB4-EGFR dimers)(992,1068,1086,1114,1148,1173)

## ErbB2
## (EGFR-ErbB2 dimers)(1139,1196,1222,1248)
## (ErbB4-ErbB2 dimers)(1139,1196,1222,1248)

## ErbB3
## (EGFR-ErbB3 dimers)(1054,1197,1222,Y1260,1276,1289,1328)
## (ErbB2-ErbB3 dimers)(1054,1197,1222,Y1260,1276,1289,1328)
## (ErbB4-ErbB3 dimers)(1054,1197,1222,Y1260,1276,1289,1328)

## ErbB4
## (EGFR-ErbB4 dimers)(1056,1188,1242)
## (ErbB2-ErbB4 dimers)(1056,1188,1242)
## (ErbB4-ErbB4 dimers)(1056,1188,1242)

## -----------------------------------------

# cross-phosphorylation of EGFR
# (EGFR-EGFR dimers) Cross-Phosphorylation of EGFR by EGFR at
# (992,1068,1086,1114,1148,1173)
100 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).EGFR(I_III!3,II!1,Y992~O).EGF(EGFL!3) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).EGFR(I_III!3,II!1,Y992~P).EGF(EGFL!3) Phosphokp1
101 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).EGFR(I_III!3,II!1,Y1068~O).EGF(EGFL!3) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).EGFR(I_III!3,II!1,Y1068~P).EGF(EGFL!3) Phosphokp2
102 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).EGFR(I_III!3,II!1,Y1086~O).EGF(EGFL!3) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).EGFR(I_III!3,II!1,Y1086~P).EGF(EGFL!3) Phosphokp3
103 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).EGFR(I_III!3,II!1,Y1114~O).EGF(EGFL!3) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).EGFR(I_III!3,II!1,Y1114~P).EGF(EGFL!3) Phosphokp4
104 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).EGFR(I_III!3,II!1,Y1148~O).EGF(EGFL!3) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).EGFR(I_III!3,II!1,Y1148~P).EGF(EGFL!3) Phosphokp5
105 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).EGFR(I_III!3,II!1,Y1173~O).EGF(EGFL!3) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).EGFR(I_III!3,II!1,Y1173~P).EGF(EGFL!3) Phosphokp6


# (ErbB2-EGFR dimers) Cross-Phosphorylation of EGFR by ErbB2 at
# (992,1068,1086,1114,1148,1173)
106 ErbB2(II!1).EGFR(I_III!3,II!1,Y992~O).EGF(EGFL!3) ->  ErbB2(II!1).EGFR(I_III!3,II!1,Y992~P).EGF(EGFL!3) Phosphokp7
107 ErbB2(II!1).EGFR(I_III!3,II!1,Y1068~O).EGF(EGFL!3) ->  ErbB2(II!1).EGFR(I_III!3,II!1,Y1068~P).EGF(EGFL!3) Phosphokp8
108 ErbB2(II!1).EGFR(I_III!3,II!1,Y1086~O).EGF(EGFL!3) ->  ErbB2(II!1).EGFR(I_III!3,II!1,Y1086~P).EGF(EGFL!3) Phosphokp9
109 ErbB2(II!1).EGFR(I_III!3,II!1,Y1114~O).EGF(EGFL!3) ->  ErbB2(II!1).EGFR(I_III!3,II!1,Y1114~P).EGF(EGFL!3) Phosphokp10
110 ErbB2(II!1).EGFR(I_III!3,II!1,Y1148~O).EGF(EGFL!3) ->  ErbB2(II!1).EGFR(I_III!3,II!1,Y1148~P).EGF(EGFL!3) Phosphokp11
111 ErbB2(II!1).EGFR(I_III!3,II!1,Y1173~O).EGF(EGFL!3) ->  ErbB2(II!1).EGFR(I_III!3,II!1,Y1173~P).EGF(EGFL!3) Phosphokp12

# (ErbB4-EGFR dimers) Cross-Phosphorylation of EGFR by ErbB4 at
# (992,1068,1086,1114,1148,1173)
112 HRG(EGFL!2).ErbB4(I_III!2,II!1).EGFR(I_III!3,II!1,Y992~O).EGF(EGFL!3) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).EGFR(I_III!3,II!1,Y992~P).EGF(EGFL!3) Phosphokp13
113 HRG(EGFL!2).ErbB4(I_III!2,II!1).EGFR(I_III!3,II!1,Y1068~O).EGF(EGFL!3) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).EGFR(I_III!3,II!1,Y1068~P).EGF(EGFL!3) Phosphokp14
114 HRG(EGFL!2).ErbB4(I_III!2,II!1).EGFR(I_III!3,II!1,Y1086~O).EGF(EGFL!3) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).EGFR(I_III!3,II!1,Y1086~P).EGF(EGFL!3) Phosphokp15
115 HRG(EGFL!2).ErbB4(I_III!2,II!1).EGFR(I_III!3,II!1,Y1114~O).EGF(EGFL!3) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).EGFR(I_III!3,II!1,Y1114~P).EGF(EGFL!3) Phosphokp16
116 HRG(EGFL!2).ErbB4(I_III!2,II!1).EGFR(I_III!3,II!1,Y1148~O).EGF(EGFL!3) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).EGFR(I_III!3,II!1,Y1148~P).EGF(EGFL!3) Phosphokp17
117 HRG(EGFL!2).ErbB4(I_III!2,II!1).EGFR(I_III!3,II!1,Y1173~O).EGF(EGFL!3) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).EGFR(I_III!3,II!1,Y1173~P).EGF(EGFL!3) Phosphokp18



# Cross-phosphorylation of ErbB2
# (EGFR-ErbB2 dimers) Cross-Phosphorylation of ErbB2 by EGFR at
# (1139,1196,1222,1248)
118 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB2(II!1,Y1139~O) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB2(II!1,Y1139~P) Phosphokp19
119 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB2(II!1,Y1196~O) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB2(II!1,Y1196~P) Phosphokp20
120 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB2(II!1,Y1222~O) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB2(II!1,Y1222~P) Phosphokp21
121 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB2(II!1,Y1248~O) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB2(II!1,Y1248~P) Phosphokp22


# Cross-phosphorylation of ErbB2
# (ErbB4-ErbB2 dimers) Cross-Phosphorylation of ErbB2 by ErbB4 at
# (1139,1196,1222,1248)
122 HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB2(II!1,Y1139~O) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB2(II!1,Y1139~P) Phosphokp23
123 HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB2(II!1,Y1196~O) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB2(II!1,Y1196~P) Phosphokp24
124 HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB2(II!1,Y1222~O) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB2(II!1,Y1222~P) Phosphokp25
125 HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB2(II!1,Y1248~O) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB2(II!1,Y1248~P) Phosphokp26


# cross-phosphorylation of ErbB3
# (EGFR-ErbB3 dimers) cross-phosphorylation of ErbB3 by EGFR at
# (1054,1197,1222,Y1260,1276,1289,1328)
126 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB3(I_III!3,II!1,Y1054~O).HRG(EGFL!3) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB3(I_III!3,II!1,Y1054~P).HRG(EGFL!3) Phosphokp27
127 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB3(I_III!3,II!1,Y1197~O).HRG(EGFL!3) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB3(I_III!3,II!1,Y1197~P).HRG(EGFL!3) Phosphokp28
128 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB3(I_III!3,II!1,Y1222~O).HRG(EGFL!3) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB3(I_III!3,II!1,Y1222~P).HRG(EGFL!3) Phosphokp29
129 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB3(I_III!3,II!1,Y1260~O).HRG(EGFL!3) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB3(I_III!3,II!1,Y1260~P).HRG(EGFL!3) Phosphokp30
130 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB3(I_III!3,II!1,Y1276~O).HRG(EGFL!3) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB3(I_III!3,II!1,Y1276~P).HRG(EGFL!3) Phosphokp31
131 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB3(I_III!3,II!1,Y1289~O).HRG(EGFL!3) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB3(I_III!3,II!1,Y1289~P).HRG(EGFL!3) Phosphokp32
132 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB3(I_III!3,II!1,Y1328~O).HRG(EGFL!3) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB3(I_III!3,II!1,Y1328~P).HRG(EGFL!3) Phosphokp33


# (ErbB2-ErbB3 dimers) cross-phosphorylation of Erbb3 by ErbB2 at
# (1054,1197,1222,Y1260,1276,1289,1328)
133 ErbB2(II!1).ErbB3(I_III!3,II!1,Y1054~O).HRG(EGFL!3) ->  ErbB2(II!1).ErbB3(I_III!3,II!1,Y1054~P).HRG(EGFL!3) Phosphokp34
134 ErbB2(II!1).ErbB3(I_III!3,II!1,Y1197~O).HRG(EGFL!3) ->  ErbB2(II!1).ErbB3(I_III!3,II!1,Y1197~P).HRG(EGFL!3) Phosphokp35
135 ErbB2(II!1).ErbB3(I_III!3,II!1,Y1222~O).HRG(EGFL!3) ->  ErbB2(II!1).ErbB3(I_III!3,II!1,Y1222~P).HRG(EGFL!3) Phosphokp36
136 ErbB2(II!1).ErbB3(I_III!3,II!1,Y1260~O).HRG(EGFL!3) ->  ErbB2(II!1).ErbB3(I_III!3,II!1,Y1260~P).HRG(EGFL!3) Phosphokp37
137 ErbB2(II!1).ErbB3(I_III!3,II!1,Y1276~O).HRG(EGFL!3) ->  ErbB2(II!1).ErbB3(I_III!3,II!1,Y1276~P).HRG(EGFL!3) Phosphokp38
138 ErbB2(II!1).ErbB3(I_III!3,II!1,Y1289~O).HRG(EGFL!3) ->  ErbB2(II!1).ErbB3(I_III!3,II!1,Y1289~P).HRG(EGFL!3) Phosphokp39
139 ErbB2(II!1).ErbB3(I_III!3,II!1,Y1328~O).HRG(EGFL!3) ->  ErbB2(II!1).ErbB3(I_III!3,II!1,Y1328~P).HRG(EGFL!3) Phosphokp40


# (ErbB4-ErbB3 dimers) cross-phosphorylation of Erbb3 by ErbB4 at
# (1054,1197,1222,Y1260,1276,1289,1328)
140 HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB3(I_III!3,II!1,Y1054~O).HRG(EGFL!3) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB3(I_III!3,II!1,Y1054~P).HRG(EGFL!3) Phosphokp41
141 HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB3(I_III!3,II!1,Y1197~O).HRG(EGFL!3) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB3(I_III!3,II!1,Y1197~P).HRG(EGFL!3) Phosphokp42
142 HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB3(I_III!3,II!1,Y1222~O).HRG(EGFL!3) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB3(I_III!3,II!1,Y1222~P).HRG(EGFL!3) Phosphokp43
143 HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB3(I_III!3,II!1,Y1260~O).HRG(EGFL!3) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB3(I_III!3,II!1,Y1260~P).HRG(EGFL!3) Phosphokp44
144 HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB3(I_III!3,II!1,Y1276~O).HRG(EGFL!3) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB3(I_III!3,II!1,Y1276~P).HRG(EGFL!3) Phosphokp45
145 HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB3(I_III!3,II!1,Y1289~O).HRG(EGFL!3) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB3(I_III!3,II!1,Y1289~P).HRG(EGFL!3) Phosphokp46
146 HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB3(I_III!3,II!1,Y1328~O).HRG(EGFL!3) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB3(I_III!3,II!1,Y1328~P).HRG(EGFL!3) Phosphokp47


# cross-phosphorylation of ErbB4
# (EGFR-ErbB4 dimers) cross-phosphorylation of ErbB4 by EGFR at
# (1056,1188,1242)
147 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB4(I_III!3,II!1,Y1056~O).HRG(EGFL!3) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB4(I_III!3,II!1,Y1056~P).HRG(EGFL!3) Phosphokp48
148 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB4(I_III!3,II!1,Y1188~O).HRG(EGFL!3) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB4(I_III!3,II!1,Y1188~P).HRG(EGFL!3) Phosphokp49
149 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB4(I_III!3,II!1,Y1242~O).HRG(EGFL!3) ->  EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).ErbB4(I_III!3,II!1,Y1242~P).HRG(EGFL!3) Phosphokp50


# (ErbB2-ErbB4 dimers) cross-phosphorylation of ErbB4 by ErbB2 at
# (1056,1188,1242)
150 ErbB2(II!1).ErbB4(I_III!3,II!1,Y1056~O).HRG(EGFL!3) ->  ErbB2(II!1).ErbB4(I_III!3,II!1,Y1056~P).HRG(EGFL!3) Phosphokp51
151 ErbB2(II!1).ErbB4(I_III!3,II!1,Y1188~O).HRG(EGFL!3) ->  ErbB2(II!1).ErbB4(I_III!3,II!1,Y1188~P).HRG(EGFL!3) Phosphokp52
152 ErbB2(II!1).ErbB4(I_III!3,II!1,Y1242~O).HRG(EGFL!3) ->  ErbB2(II!1).ErbB4(I_III!3,II!1,Y1242~P).HRG(EGFL!3) Phosphokp53


# (ErbB4-ErbB4 dimers) cross-phosphorylation of ErbB4 by ErbB4 at
# (1056,1188,1242)
153 HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB4(I_III!3,II!1,Y1056~O).HRG(EGFL!3) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB4(I_III!3,II!1,Y1056~P).HRG(EGFL!3) Phosphokp54
154 HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB4(I_III!3,II!1,Y1188~O).HRG(EGFL!3) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB4(I_III!3,II!1,Y1188~P).HRG(EGFL!3) Phosphokp55
155 HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB4(I_III!3,II!1,Y1242~O).HRG(EGFL!3) ->  HRG(EGFL!2).ErbB4(I_III!2,II!1).ErbB4(I_III!3,II!1,Y1242~P).HRG(EGFL!3) Phosphokp56

############## INTRINSIC RECEPTOR DEPHOSPHORYLATION ##############

# EGFR (992,1068,1086,1114,1148,1173)
156 EGFR(Y992~P) -> EGFR(Y992~O) Phosphokm1
157 EGFR(Y1068~P) -> EGFR(Y1068~O) Phosphokm2
158 EGFR(Y1086~P) -> EGFR(Y1086~O) Phosphokm3
159 EGFR(Y1114~P) -> EGFR(Y1114~O) Phosphokm4
160 EGFR(Y1148~P) -> EGFR(Y1148~O) Phosphokm5
161 EGFR(Y1173~P) -> EGFR(Y1173~O) Phosphokm6


# ErbB2 (1139,1196,1222,1248)
162 ErbB2(Y1139~P) -> ErbB2(Y1139~O) Phosphokm7
163 ErbB2(Y1196~P) -> ErbB2(Y1196~O) Phosphokm8
164 ErbB2(Y1222~P) -> ErbB2(Y1222~O) Phosphokm9
165 ErbB2(Y1248~P) -> ErbB2(Y1248~O) Phosphokm10


# ErbB3 (1054,1197,1222,Y1260,1276,1289,1328)
166 ErbB3(Y1054~P) -> ErbB3(Y1054~O) Phosphokm11
167 ErbB3(Y1197~P) -> ErbB3(Y1197~O) Phosphokm12
168 ErbB3(Y1222~P) -> ErbB3(Y1222~O) Phosphokm13
169 ErbB3(Y1260~P) -> ErbB3(Y1260~O) Phosphokm14
170 ErbB3(Y1276~P) -> ErbB3(Y1276~O) Phosphokm15
171 ErbB3(Y1289~P) -> ErbB3(Y1289~O) Phosphokm16
172 ErbB3(Y1328~P) -> ErbB3(Y1328~O) Phosphokm17


# ErbB3 (1056,1188,1242)
173 ErbB4(Y1056~P) -> ErbB4(Y1056~O) Phosphokm18
174 ErbB4(Y1188~P) -> ErbB4(Y1188~O) Phosphokm19
175 ErbB4(Y1242~P) -> ErbB4(Y1242~O) Phosphokm20

############## Grb2 BINDING TO A RECEPTOR ##############

## EGFR = 1068,1114,1148,1173
## ErbB2 = 1139

# EGFR
# Y1068,Y1086,Y1148,Y1173
176 EGFR(Y1068~P) + Grb2(SH2r,SH2s) <-> EGFR(Y1068~P!1).Grb2(SH2r!1,SH2s) Grb2kp1,Grb2km1
177 EGFR(Y1114~P) + Grb2(SH2r,SH2s) <-> EGFR(Y1114~P!1).Grb2(SH2r!1,SH2s) Grb2kp2,Grb2km2
178 EGFR(Y1148~P) + Grb2(SH2r,SH2s) <-> EGFR(Y1148~P!1).Grb2(SH2r!1,SH2s) Grb2kp3,Grb2km3
179 EGFR(Y1173~P) + Grb2(SH2r,SH2s) <-> EGFR(Y1173~P!1).Grb2(SH2r!1,SH2s) Grb2kp4,Grb2km4

# ErbB2
# Y1139
180 ErbB2(Y1139~P) + Grb2(SH2r,SH2s) <-> ErbB2(Y1139~P!1).Grb2(SH2r!1,SH2s)         Grb2kp5,Grb2km5


############## Shc BINDING TO A RECEPTOR ##############

## EGFR - 992,1086,1114
## ErbB2 - 1196,1222,1248
## ErbB3 - 1328
## ErbB4 - 1188,1242

# EGFR
#Y992,Y086,Y1114
181 EGFR(Y992~P) + p52Shc1(PTB) <-> EGFR(Y992~P!1).p52Shc1(PTB!1)       Shc1kp0,Shc1km0
182 EGFR(Y1086~P) + p52Shc1(PTB) <-> EGFR(Y1086~P!1).p52Shc1(PTB!1)       Shc1kp1,Shc1km1
183 EGFR(Y1114~P) + p52Shc1(PTB) <-> EGFR(Y1114~P!1).p52Shc1(PTB!1)       Shc1kp2,Shc1km2

# ErbB2
#Y1196,Y1222,Y1248
184 ErbB2(Y1196~P) + p52Shc1(PTB) <-> ErbB2(Y1196~P!1).p52Shc1(PTB!1)       Shc1kp3,Shc1km3
185 ErbB2(Y1222~P) + p52Shc1(PTB) <-> ErbB2(Y1222~P!1).p52Shc1(PTB!1)       Shc1kp4,Shc1km4
186 ErbB2(Y1248~P) + p52Shc1(PTB) <-> ErbB2(Y1248~P!1).p52Shc1(PTB!1)       Shc1kp5,Shc1km5

# ErbB3
#Y1328
187 ErbB3(Y1328~P) + p52Shc1(PTB) <-> ErbB3(Y1328~P!1).p52Shc1(PTB!1)       Shc1kp6,Shc1km6

#ErbB4
#Y1188,Y1242
188 ErbB4(Y1188~P) + p52Shc1(PTB) <-> ErbB4(Y1188~P!1).p52Shc1(PTB!1)       Shc1kp7,Shc1km7
189 ErbB4(Y1242~P) + p52Shc1(PTB) <-> ErbB4(Y1242~P!1).p52Shc1(PTB!1)       Shc1kp8,Shc1km8

# Transphosphorylation of Shc by a receptor
# EGFR-EGFR where EGFR transphosphorylates Shc
#Y992,Y086,Y1114
190 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~O,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3) -> EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~P,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3)    Shc1kp9
191 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~O,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3) -> EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~P,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3)    Shc1kp10
192 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~O,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~P,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Shc1kp11

# EGFR-ErbB2 where EGFR transphosphorylates Shc
#Y1196,Y1222,Y1248
193 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~O,PTB!4).ErbB2(II!1,Y1196~P!4) -> EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~P,PTB!4).ErbB2(II!1,Y1196~P!4)    Shc1kp12
194 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~O,PTB!4).ErbB2(II!1,Y1222~P!4) -> EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~P,PTB!4).ErbB2(II!1,Y1222~P!4)    Shc1kp13
195 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~O,PTB!4).ErbB2(II!1,Y1248~P!4) -> EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~P,PTB!4).ErbB2(II!1,Y1248~P!4)    Shc1kp14

# EGFR-ErbB3 where EGFR transphosphorylates Shc
#Y1328
196 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~O,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3) -> EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~P,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3)    Shc1kp15

# EGFR-ErbB4 where EGFR transphosphorylates Shc
#Y1188,Y1242
197 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~O,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3) -> EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~P,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3)    Shc1kp16
198 EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~O,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3) -> EGF(EGFL!2).EGFR(I_III!2,II!1,T669~O).p52Shc1(Y317~P,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3)    Shc1kp17


# ErbB2-EGFR where ErbB2 transphosphorylates Shc
#Y992,Y086,Y1114
199 ErbB2(II!1).p52Shc1(Y317~O,PTB!4).EGFR(I_III!2,II!1,Y992~P!4).EGF(EGFL!2) -> ErbB2(II!1).p52Shc1(Y317~P,PTB!4).EGFR(I_III!2,II!1,Y992~P!4).EGF(EGFL!2) Shc1kp18
200 ErbB2(II!1).p52Shc1(Y317~O,PTB!4).EGFR(I_III!2,II!1,Y1086~P!4).EGF(EGFL!2) -> ErbB2(II!1).p52Shc1(Y317~P,PTB!4).EGFR(I_III!2,II!1,Y1086~P!4).EGF(EGFL!2) Shc1kp19
201 ErbB2(II!1).p52Shc1(Y317~O,PTB!4).EGFR(I_III!2,II!1,Y1114~P!4).EGF(EGFL!2) -> ErbB2(II!1).p52Shc1(Y317~P,PTB!4).EGFR(I_III!2,II!1,Y1114~P!4).EGF(EGFL!2) Shc1kp20

# ErbB2-ErbB3 where ErbB2 transphosphorylates Shc
#Y1328
202 ErbB2(II!1).p52Shc1(Y317~O,PTB!4).ErbB3(I_III!2,II!1,Y1328~P!4).HRG(EGFL!2) -> ErbB2(II!1).p52Shc1(Y317~P,PTB!4).ErbB3(I_III!2,II!1,Y1328~P!4).HRG(EGFL!2) Shc1kp21

# ErbB2-ErbB4 where ErbB2 transphosphorylates Shc
#Y1188,Y1242
203 ErbB2(II!1).p52Shc1(Y317~O,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3) -> ErbB2(II!1).p52Shc1(Y317~P,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3)    Shc1kp22
204 ErbB2(II!1).p52Shc1(Y317~O,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3) -> ErbB2(II!1).p52Shc1(Y317~P,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3)    Shc1kp23


# ErbB4-EGFR where ErbB4 transphosphorylates Shc
#Y086,Y1114
205 HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~O,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3) -> HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~P,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3)    Shc1kp24
206 HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~O,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3) -> HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~P,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3)    Shc1kp25
207 HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~O,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~P,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Shc1kp26

# ErbB4-ErbB2 where ErbB4 transphosphorylates Shc
#Y1196,Y1222,Y1248
208 HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~O,PTB!4).ErbB2(II!1,Y1196~P!4) -> HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~P,PTB!4).ErbB2(II!1,Y1196~P!4)    Shc1kp27
209 HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~O,PTB!4).ErbB2(II!1,Y1222~P!4) -> HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~P,PTB!4).ErbB2(II!1,Y1222~P!4)    Shc1kp28
210 HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~O,PTB!4).ErbB2(II!1,Y1248~P!4) -> HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~P,PTB!4).ErbB2(II!1,Y1248~P!4)    Shc1kp29

# ErbB4-ErbB3 where ErbB4 transphosphorylates Shc
#Y1328
211 HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~O,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3) -> HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~P,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3)    Shc1kp30

# ErbB4-ErbB4 where ErbB4 transphosphorylates Shc
#Y1188,Y1242
212 HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~O,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3) -> HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~P,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3)    Shc1kp31
213 HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~O,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3) -> HRG(EGFL!2).ErbB4(I_III!2,II!1).p52Shc1(Y317~P,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3)    Shc1kp32


# Intrinsic dephosphorylation of Phospho-Shc
214 p52Shc1(Y317~P) -> p52Shc1(Y317~O)    Shc1km14


############## SCAFFOLDING REACTIONS ##############

## These are general reactions of getting from Receptor to RAS via Sos1

# Grb2 binds to Shc
215 Grb2(SH2r,SH2s) + p52Shc1(Y317~P) <-> Grb2(SH2r,SH2s!1).p52Shc1(Y317~P!1)       Scafoldkp1,Scafoldkm1

# Sos1 binds Grb2
216 Sos1(PRS) + Grb2(nSH3,cSH3) <-> Sos1(PRS!1).Grb2(nSH3!1,cSH3)	Scafoldkp2,Scafoldkm2

#NOTE: this reaction's rate is increased to demonstrate positive feedback from the AKT pathway to the Erk pathway
# Binding of Sos1 to Gab1-Grb2
217 Sos1(PRS) + Grb2(nSH3,cSH3!2).Gab1(PRS1_PRS2!2) <-> Sos1(PRS!1).Grb2(nSH3!1,cSH3!2).Gab1(PRS1_PRS2!2)   Scafoldkp3,Scafoldkm3


############## KRAS RECRUITEMENT TO RECEPTOR ##############

# Binding of KRas to receptor bound Sos1-Grb2-rec at the GEF domain
218 Sos1(PRS!2,GEF,S1132~O,S1167~O,S1178~O,S1193~O).Grb2(nSH3!2,SH2r!+) + KRas(GTPase,g~GDP) -> Sos1(PRS!2,GEF!3,S1132~O,S1167~O,S1178~O,S1193~O).Grb2(nSH3!2,SH2r!+).KRas(GTPase!3,g~GDP)       Sos1kp1

# Binding of KRas to membrane bound Sos1-Grb2-Shc-rec at the GEF domain
219 Sos1(PRS!2,GEF,S1132~O,S1167~O,S1178~O,S1193~O).Grb2(nSH3!2,SH2s!1).p52Shc1(PTB!+,Y317~P!1) + KRas(GTPase,g~GDP) -> Sos1(PRS!2,GEF!3,S1132~O,S1167~O,S1178~O,S1193~O).Grb2(nSH3!2,SH2s!1).p52Shc1(PTB!+,Y317~P!1).KRas(GTPase!3,g~GDP)     Sos1kp1

# Binding of KRas to membrane bound Sos1-Grb2-rec at the REM domain
220 Sos1(PRS!2,REM,S1132~O,S1167~O,S1178~O,S1193~O).Grb2(nSH3!2,SH2r!+) + KRas(GTPase,g~GTP) -> Sos1(PRS!2,REM!3,S1132~O,S1167~O,S1178~O,S1193~O).Grb2(nSH3!2,SH2r!+).KRas(GTPase!3,g~GTP)     Sos1kp3

# Binding of KRas to membrane bound Sos1-Grb2-Shc-rec at the REM domain
221 Sos1(PRS!2,REM,S1132~O,S1167~O,S1178~O,S1193~O).Grb2(nSH3!2,SH2s!1).p52Shc1(PTB!+,Y317~P!1) + KRas(GTPase,g~GTP) -> Sos1(PRS!2,REM!3,S1132~O,S1167~O,S1178~O,S1193~O).Grb2(nSH3!2,SH2s!1).p52Shc1(PTB!+,Y317~P!1).KRas(GTPase!3,g~GTP)     Sos1kp3


# Ras activation by Sos
# REM domain unbound
222 Sos1(REM,GEF!3,S1132~O,S1167~O,S1178~O,S1193~O).KRas(GTPase!3,g~GDP) <-> Sos1(REM,GEF!3,S1132~O,S1167~O,S1178~O,S1193~O).KRas(GTPase!3,g~GTP)     Sos1kp5,Sos1km5

# Ras activation by Sos
# REM domain bound to Ras-GTP, this is a positive feedback loop which increases Ras activation
223 Sos1(REM!+,GEF!3,S1132~O,S1167~O,S1178~O,S1193~O).KRas(GTPase!3,g~GDP) <-> Sos1(REM!+,GEF!3,S1132~O,S1167~O,S1178~O,S1193~O).KRas(GTPase!3,g~GTP)     Sos1kp6,Sos1km6

# Intrinsic deactivation of Ras
224 KRas(GTPase,g~GTP) -> KRas(GTPase,g~GDP) Sos1kp7

# Dissociation of KRas from Sos1
# at GEF domain
225 Sos1(GEF!3).KRas(GTPase!3) -> Sos1(GEF) + KRas(GTPase)       Sos1kp8

# at REM domain
226 Sos1(REM!3).KRas(GTPase!3) -> Sos1(REM) + KRas(GTPase)       Sos1kp9

############## MAP Kinase Cascade ##############

# Activated RAS (RAS-GTP) binds Raf1
227 KRas(g~GTP,GTPase) + Raf1(RBD) -> KRas(g~GTP,GTPase!1).Raf1(RBD!1)       MAPKkp1

# Activation of Raf1 bound to Ras
228 KRas(GTPase!1,g~GTP).Raf1(RBD!1,S296~O) -> KRas(GTPase!1,g~GTP).Raf1(RBD!1,S296~P)          MAPKkp2
229 KRas(GTPase!1,g~GTP).Raf1(RBD!1,S338~O) -> KRas(GTPase!1,g~GTP).Raf1(RBD!1,S338~P)          MAPKkp3
230 KRas(GTPase!1,g~GTP).Raf1(RBD!1,Y341~O) -> KRas(GTPase!1,g~GTP).Raf1(RBD!1,Y341~P)          MAPKkp4
231 KRas(GTPase!1,g~GTP).Raf1(RBD!1,T491~O) -> KRas(GTPase!1,g~GTP).Raf1(RBD!1,T491~P)          MAPKkp5
232 KRas(GTPase!1,g~GTP).Raf1(RBD!1,S494~O) -> KRas(GTPase!1,g~GTP).Raf1(RBD!1,S494~P)          MAPKkp6

# Dissociation of activated Raf1 (MKKK) from Raf1-RAS Complex
233 Raf1(RBD!1).KRas(GTPase!1) ->  Raf1(RBD) + KRas(GTPase)              MAPKkp7

### Raf1 intrinsic dephosphorylation of activation sites
234 Raf1(S296~P) -> Raf1(S296~O)     MAPKkp8
235 Raf1(S338~P) -> Raf1(S338~O)     MAPKkp8
236 Raf1(Y341~P) -> Raf1(Y341~O)     MAPKkp8
237 Raf1(T491~P) -> Raf1(T491~O)     MAPKkp8
238 Raf1(S494~P) -> Raf1(S494~O)     MAPKkp8


### Raf1 activates MEK1

# Activated Raf1 binds to MEK1
239 Raf1(STkinase,S29~O,S43~O,S259~O!?,S289~O,S296~P,S301~O,S338~P,Y341~P,S471~O,T491~P,S494~P,S642~O) + MEK1(S218~O) -> Raf1(STkinase!1,S29~O,S43~O,S259~O!?,S289~O,S296~P,S301~O,S338~P,Y341~P,S471~O,T491~P,S494~P,S642~O).MEK1(S218~O!1)       MAPKkp9
240 Raf1(STkinase,S29~O,S43~O,S259~O!?,S289~O,S296~P,S301~O,S338~P,Y341~P,S471~O,T491~P,S494~P,S642~O) + MEK1(S222~O) -> Raf1(STkinase!1,S29~O,S43~O,S259~O!?,S289~O,S296~P,S301~O,S338~P,Y341~P,S471~O,T491~P,S494~P,S642~O).MEK1(S222~O!1)       MAPKkp10

# Activated Raf1 activates Mek1
241 Raf1(STkinase!1,S29~O,S43~O,S259~O!?,S289~O,S296~P,S301~O,S338~P,Y341~P,S471~O,T491~P,S494~P,S642~O).MEK1(S218~O!1) -> Raf1(STkinase!1,S29~O,S43~O,S259~O!?,S289~O,S296~P,S301~O,S338~P,Y341~P,S471~O,T491~P,S494~P,S642~O).MEK1(S218~P!1) MAPKkp11
242 Raf1(STkinase!1,S29~O,S43~O,S259~O!?,S289~O,S296~P,S301~O,S338~P,Y341~P,S471~O,T491~P,S494~P,S642~O).MEK1(S222~O!1) -> Raf1(STkinase!1,S29~O,S43~O,S259~O!?,S289~O,S296~P,S301~O,S338~P,Y341~P,S471~O,T491~P,S494~P,S642~O).MEK1(S222~P!1) MAPKkp12

#Raf1-Mek Dissociation
243 Raf1(STkinase!1).MEK1(S218!1) -> Raf1(STkinase) + MEK1(S218)	MAPKkp13
244 Raf1(STkinase!1).MEK1(S222!1) -> Raf1(STkinase) + MEK1(S222)	MAPKkp13

### MEK1 intrinsic dephosphorylation of activation sites
245 MEK1(S218~P) -> MEK1(S218~O)     MAPKkp15
246 MEK1(S222~P) -> MEK1(S222~O)       MAPKkp15


### MEK1 activates ERK2
# Activated MEK1 binds to ERK2
247 MEK1(delta,S218~P!?,S222~P!?,T292~O) + ERK2(CD,STkinase) -> MEK1(delta!1,S218~P!?,S222~P!?,T292~O).ERK2(CD!1,STkinase)     MAPKkp16

# Activated Mek1 phosphorylates Erk2
248 ERK2(CD!1,T185~O).MEK1(delta!1,S218~P!?,S222~P!?,T292~O) -> ERK2(CD!1,T185~P).MEK1(delta!1,S218~P!?,S222~P!?,T292~O)        MAPKkp17
249 ERK2(CD!1,Y187~O).MEK1(delta!1,S218~P!?,S222~P!?,T292~O) -> ERK2(CD!1,Y187~P).MEK1(delta!1,S218~P!?,S222~P!?,T292~O)        MAPKkp18

# Dissociation of ERK2 from MEK1
250 ERK2(CD!1).MEK1(delta!1) -> ERK2(CD) + MEK1(delta)            MAPKkp19

## ERK2 dephosphorylation
251 ERK2(Y187~P) -> ERK2(Y187~O)       MAPKkp20
252 ERK2(T185~P) -> ERK2(T185~O)       MAPKkp20


############## ERK2'S NEGATIVE FEEDBACK LOOPS ##############

## Erk2 inhibits Sos1, EGFR, Raf1, and Mek
#BINDING

#  Activated ERK2 binds with Sos1
253 ERK2(STkinase,CD,T185~P,Y187~P) + Sos1(S1132~O) -> ERK2(STkinase!1,CD,T185~P,Y187~P).Sos1(S1132~O!1)   MAPKkp21
254 ERK2(STkinase,CD,T185~P,Y187~P) + Sos1(S1167~O) -> ERK2(STkinase!1,CD,T185~P,Y187~P).Sos1(S1167~O!1)   MAPKkp22
255 ERK2(STkinase,CD,T185~P,Y187~P) + Sos1(S1178~O) -> ERK2(STkinase!1,CD,T185~P,Y187~P).Sos1(S1178~O!1)   MAPKkp23
256 ERK2(STkinase,CD,T185~P,Y187~P) + Sos1(S1193~O) -> ERK2(STkinase!1,CD,T185~P,Y187~P).Sos1(S1193~O!1)   MAPKkp24

#  ERK2 binds with EGFR
257 ERK2(STkinase,CD,T185~P,Y187~P) + EGFR(T669~O) -> ERK2(STkinase!1,CD,T185~P,Y187~P).EGFR(T669~O!1)       MAPKkp25

#  ERK2 Binds to Raf1-1
258 ERK2(STkinase,CD,T185~P,Y187~P) + Raf1(S29~O) -> ERK2(STkinase!1,CD,T185~P,Y187~P).Raf1(S29~O!1)   MAPKkp26
259 ERK2(STkinase,CD,T185~P,Y187~P) + Raf1(S43~O) -> ERK2(STkinase!1,CD,T185~P,Y187~P).Raf1(S43~O!1)   MAPKkp27
260 ERK2(STkinase,CD,T185~P,Y187~P) + Raf1(S289~O) -> ERK2(STkinase!1,CD,T185~P,Y187~P).Raf1(S289~O!1)   MAPKkp28
261 ERK2(STkinase,CD,T185~P,Y187~P) + Raf1(S301~O) -> ERK2(STkinase!1,CD,T185~P,Y187~P).Raf1(S301~O!1)   MAPKkp29
262 ERK2(STkinase,CD,T185~P,Y187~P) + Raf1(S471~O) -> ERK2(STkinase!1,CD,T185~P,Y187~P).Raf1(S471~O!1)   MAPKkp30
263 ERK2(STkinase,CD,T185~P,Y187~P) + Raf1(S642~O) -> ERK2(STkinase!1,CD,T185~P,Y187~P).Raf1(S642~O!1)   MAPKkp31

#  ERK2 Binds to MEK1
264 ERK2(STkinase,CD,T185~P,Y187~P) + MEK1(T292~O) -> ERK2(STkinase!1,CD,T185~P,Y187~P).MEK1(T292~O!1)      MAPKkp32


#  ERK2 inhibits Sos1
265 ERK2(STkinase!1,T185~P,Y187~P).Sos1(S1132~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).Sos1(S1132~P!1)        MAPKkp33
266 ERK2(STkinase!1,T185~P,Y187~P).Sos1(S1167~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).Sos1(S1167~P!1)        MAPKkp34
267 ERK2(STkinase!1,T185~P,Y187~P).Sos1(S1178~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).Sos1(S1178~P!1)        MAPKkp35
268 ERK2(STkinase!1,T185~P,Y187~P).Sos1(S1193~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).Sos1(S1193~P!1)        MAPKkp36

# ERK2 inhibits EGFR dimers.
269 ERK2(STkinase!1,T185~P,Y187~P).EGFR(T669~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).EGFR(T669~P!1)      MAPKkp37

#  ERK2 inhibits Raf1-1
270 ERK2(STkinase!1,T185~P,Y187~P).Raf1(S29~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).Raf1(S29~P!1)   MAPKkp38
271 ERK2(STkinase!1,T185~P,Y187~P).Raf1(S43~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).Raf1(S43~P!1)   MAPKkp39
272 ERK2(STkinase!1,T185~P,Y187~P).Raf1(S289~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).Raf1(S289~P!1)   MAPKkp40
273 ERK2(STkinase!1,T185~P,Y187~P).Raf1(S301~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).Raf1(S301~P!1)   MAPKkp41
274 ERK2(STkinase!1,T185~P,Y187~P).Raf1(S471~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).Raf1(S471~P!1)   MAPKkp42
275 ERK2(STkinase!1,T185~P,Y187~P).Raf1(S642~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).Raf1(S642~P!1)   MAPKkp43

# ERK2 inhibits MEK1.
276 ERK2(STkinase!1,T185~P,Y187~P).MEK1(T292~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).MEK1(T292~P!1)        MAPKkp44


#inhibitory sites intrinsic dephosphorylation

#Sos1 sites
277 Sos1(S1132~P) -> Sos1(S1132~O) MAPKkp45
278 Sos1(S1167~P) -> Sos1(S1167~O) MAPKkp45
279 Sos1(S1178~P) -> Sos1(S1178~O) MAPKkp45
280 Sos1(S1193~P) -> Sos1(S1193~O) MAPKkp45

#EGFR site
281 EGFR(T669~P) -> EGFR(T669~O)	MAPKkp46

#Raf1 sites
282 Raf1(S29~P) -> Raf1(S29~O)	MAPKkp47
283 Raf1(S43~P) -> Raf1(S43~O)	MAPKkp47
284 Raf1(S289~P) -> Raf1(S289~O)	MAPKkp47
285 Raf1(S301~P) -> Raf1(S301~O)	MAPKkp47
286 Raf1(S471~P) -> Raf1(S471~O)	MAPKkp47
287 Raf1(S642~P) -> Raf1(S642~O)	MAPKkp47

#Mek site
288 MEK1(T292~P) -> MEK1(T292~O) MAPKkp48


#ERK2 regulatory complex Dissociation
#  Erk dissasociates with Sos1
289 ERK2(STkinase!1).Sos1(S1132!1) -> ERK2(STkinase) + Sos1(S1132)	MAPKkp49
290 ERK2(STkinase!1).Sos1(S1167!1) -> ERK2(STkinase) + Sos1(S1167)	MAPKkp49
291 ERK2(STkinase!1).Sos1(S1178!1) -> ERK2(STkinase) + Sos1(S1178)	MAPKkp49
292 ERK2(STkinase!1).Sos1(S1193!1) -> ERK2(STkinase) + Sos1(S1193)	MAPKkp49

#  Erk dissasociates with EGFR
293 ERK2(STkinase!1).EGFR(T669!1) -> ERK2(STkinase) + EGFR(T669)	MAPKkp50

#  Erk dissasociates with Raf1
294 ERK2(STkinase!1).Raf1(S29!1) -> ERK2(STkinase) + Raf1(S29)	MAPKkp51
295 ERK2(STkinase!1).Raf1(S43!1) -> ERK2(STkinase) + Raf1(S43)	MAPKkp51
296 ERK2(STkinase!1).Raf1(S289!1) -> ERK2(STkinase) + Raf1(S289)	MAPKkp51
297 ERK2(STkinase!1).Raf1(S301!1) -> ERK2(STkinase) + Raf1(S301)	MAPKkp51
298 ERK2(STkinase!1).Raf1(S471!1) -> ERK2(STkinase) + Raf1(S471)	MAPKkp51
299 ERK2(STkinase!1).Raf1(S642!1) -> ERK2(STkinase) + Raf1(S642)	MAPKkp51

#  Erk dissasociates with MEK1
300 ERK2(STkinase!1).MEK1(T292!1) -> ERK2(STkinase) + MEK1(T292)	MAPKkp52


############## Gab1 interactions ##############

#Gab1 binds to membrane localized Grb2 (Grb2-p52Shc1-rec)
301 Gab1(PRS1_PRS2) + Grb2(cSH3,SH2s!2).p52Shc1(Y317~P!2,PTB!+) -> Gab1(PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+)     Gab1kp1

#Gab1 binds to membrane localized Grb2 (Grb2-rec)
302 Gab1(PRS1_PRS2) + Grb2(cSH3,SH2r!+) -> Gab1(PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+)       Gab1kp1

# Transphosphorylation of Gab1 by a receptor
# EGFR-EGFR where EGFR transphosphorylates Gab1-Grb2-Shc
303 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3)    Gab1kp3
304 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3)    Gab1kp4
305 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3)    Gab1kp5
306 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3)    Gab1kp6

307 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3)    Gab1kp7
308 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3)    Gab1kp8
309 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3)    Gab1kp9
310 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3)    Gab1kp10

311 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp11
312 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp12
313 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp13
314 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp14

# EGFR-EGFR where EGFR transphosphorylates Gab1-Grb2
315 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3)    Gab1kp15
316 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3)    Gab1kp16
317 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3)    Gab1kp17
318 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3)    Gab1kp18

319 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp19
320 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp20
321 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp21
322 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp22

323 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3)    Gab1kp23
324 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3)    Gab1kp24
325 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3)    Gab1kp25
326 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3)    Gab1kp26

327 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3)    Gab1kp27
328 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3)    Gab1kp28
329 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3)    Gab1kp29
330 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3)    Gab1kp30


# EGFR-ErbB2 where EGFR transphosphorylates Gab1-Grb2-Shc
331 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1196~P!4) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1196~P!4)    Gab1kp31
332 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1196~P!4) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1196~P!4)    Gab1kp32
333 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1196~P!4) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1196~P!4)    Gab1kp33
334 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1196~P!4) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1196~P!4)    Gab1kp34

335 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1222~P!4) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1222~P!4)    Gab1kp35
336 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1222~P!4) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1222~P!4)    Gab1kp36
337 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1222~P!4) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1222~P!4)    Gab1kp37
338 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1222~P!4) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1222~P!4)    Gab1kp38

339 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1248~P!4) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1248~P!4)    Gab1kp39
340 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1248~P!4) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1248~P!4)    Gab1kp40
341 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1248~P!4) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1248~P!4)    Gab1kp41
342 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1248~P!4) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1248~P!4)    Gab1kp42


# EGFR-ErbB2 where EGFR transphosphorylates Gab1-Grb2
343 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).ErbB2(II!1,Y1139~P!4) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).ErbB2(II!1,Y1139~P!4)    Gab1kp43
344 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).ErbB2(II!1,Y1139~P!4) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).ErbB2(II!1,Y1139~P!4)    Gab1kp44
345 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).ErbB2(II!1,Y1139~P!4) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).ErbB2(II!1,Y1139~P!4)    Gab1kp45
346 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).ErbB2(II!1,Y1139~P!4) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).ErbB2(II!1,Y1139~P!4)    Gab1kp46

# EGFR-ErbB3 where EGFR transphosphorylates Gab1-Grb2-Shc
347 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3)    Gab1kp47
348 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3)	Gab1kp48
349 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3)    Gab1kp49
350 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3)    Gab1kp50


# EGFR-ErbB4 where EGFR transphosphorylates Gab1-Grb2-Shc
351 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3)    Gab1kp51
352 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3)	Gab1kp52
353 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3)    Gab1kp53
354 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3)    Gab1kp54

355 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3)    Gab1kp55
356 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3)	Gab1kp56
357 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3)    Gab1kp57
358 EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3) -> EGF(EGFL!5).EGFR(I_III!5,II!1,T669~O).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3)    Gab1kp58



# ErbB2-EGFR where ErbB2 transphosphorylates Gab1-Grb2-Shc
359 ErbB2(II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3)    Gab1kp59
360 ErbB2(II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3)    Gab1kp60
361 ErbB2(II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3)    Gab1kp61
362 ErbB2(II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3)    Gab1kp62

363 ErbB2(II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3)    Gab1kp63
364 ErbB2(II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3)    Gab1kp64
365 ErbB2(II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3)    Gab1kp65
366 ErbB2(II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3)    Gab1kp66

367 ErbB2(II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp67
368 ErbB2(II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp68
369 ErbB2(II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp69
370 ErbB2(II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp70

# ErbB2-EGFR where ErbB2 transphosphorylates Gab1-Grb2
371 ErbB2(II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3)    Gab1kp71
372 ErbB2(II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3)    Gab1kp72
373 ErbB2(II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3)    Gab1kp73
374 ErbB2(II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3)    Gab1kp74

375 ErbB2(II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp75
376 ErbB2(II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp76
377 ErbB2(II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp77
378 ErbB2(II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp78

379 ErbB2(II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3)    Gab1kp79
380 ErbB2(II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3)    Gab1kp80
381 ErbB2(II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3)    Gab1kp81
382 ErbB2(II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3)    Gab1kp82

383 ErbB2(II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3)    Gab1kp83
384 ErbB2(II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3)    Gab1kp84
385 ErbB2(II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3)    Gab1kp85
386 ErbB2(II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3) -> ErbB2(II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3)    Gab1kp86


# ErbB2-ErbB3 where ErbB2 transphosphorylates Gab1-Grb2-Shc
387 ErbB2(II!1).Gab1(Y447~O,PRS1_PRS2!5).Grb2(cSH3!5,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3) -> ErbB2(II!1).Gab1(Y447~P,PRS1_PRS2!5).Grb2(cSH3!5,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3)    Gab1kp87
388 ErbB2(II!1).Gab1(Y472~O,PRS1_PRS2!5).Grb2(cSH3!5,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3) -> ErbB2(II!1).Gab1(Y472~P,PRS1_PRS2!5).Grb2(cSH3!5,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3)    Gab1kp88
389 ErbB2(II!1).Gab1(Y619~O,PRS1_PRS2!5).Grb2(cSH3!5,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3) -> ErbB2(II!1).Gab1(Y619~P,PRS1_PRS2!5).Grb2(cSH3!5,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3)    Gab1kp89
390 ErbB2(II!1).Gab1(Y657~O,PRS1_PRS2!5).Grb2(cSH3!5,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3) -> ErbB2(II!1).Gab1(Y657~P,PRS1_PRS2!5).Grb2(cSH3!5,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3)    Gab1kp90


# ErbB2-ErbB4 where ErbB2 transphosphorylates Gab1-Grb2-Shc
391 ErbB2(II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3) -> ErbB2(II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3)    Gab1kp91
392 ErbB2(II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3) -> ErbB2(II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3)	Gab1kp92
393 ErbB2(II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3) -> ErbB2(II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3)    Gab1kp93
394 ErbB2(II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3) -> ErbB2(II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3)    Gab1kp94

395 ErbB2(II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3) -> ErbB2(II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3)    Gab1kp95
396 ErbB2(II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3) -> ErbB2(II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3)	Gab1kp96
397 ErbB2(II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3) -> ErbB2(II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3)    Gab1kp97
398 ErbB2(II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3) -> ErbB2(II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3)    Gab1kp98


# Transphosphorylation of Gab1 by a receptor
# ErbB4-EGFR where ErbB4 transphosphorylates Gab1-Grb2-Shc
399 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3)    Gab1kp99
400 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3)    Gab1kp100
401 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3)    Gab1kp101
402 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y992~P!4).EGF(EGFL!3)    Gab1kp102

403 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3)    Gab1kp103
404 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3)    Gab1kp104
405 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3)    Gab1kp105
406 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1086~P!4).EGF(EGFL!3)    Gab1kp106

407 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp107
408 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp108
409 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp109
410 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp110

# ErbB4-EGFR where ErbB4 transphosphorylates Gab1-Grb2
411 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3)    Gab1kp111
412 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3)    Gab1kp112
413 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3)    Gab1kp113
414 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1068~P!4).EGF(EGFL!3)    Gab1kp114

415 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp115
416 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp116
417 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp117
418 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1114~P!4).EGF(EGFL!3)    Gab1kp118

419 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3)    Gab1kp119
420 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3)    Gab1kp120
421 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3)    Gab1kp121
422 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1148~P!4).EGF(EGFL!3)    Gab1kp122

423 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3)    Gab1kp123
424 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3)    Gab1kp124
425 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3)    Gab1kp125
426 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).EGFR(I_III!3,II!1,Y1173~P!4).EGF(EGFL!3)    Gab1kp126


# ErbB4-ErbB2 where ErbB4 transphosphorylates Gab1-Grb2-Shc
427 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1196~P!4) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1196~P!4)    Gab1kp127
428 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1196~P!4) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1196~P!4)    Gab1kp128
429 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1196~P!4) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1196~P!4)    Gab1kp129
430 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1196~P!4) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1196~P!4)    Gab1kp130

431 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1222~P!4) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1222~P!4)    Gab1kp131
432 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1222~P!4) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1222~P!4)    Gab1kp132
433 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1222~P!4) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1222~P!4)    Gab1kp133
434 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1222~P!4) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1222~P!4)    Gab1kp134

435 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1248~P!4) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1248~P!4)    Gab1kp135
436 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1248~P!4) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1248~P!4)    Gab1kp136
437 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1248~P!4) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1248~P!4)    Gab1kp137
438 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1248~P!4) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB2(II!1,Y1248~P!4)    Gab1kp138

# ErbB4-ErbB2 where ErbB4 transphosphorylates Gab1-Grb2
439 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).ErbB2(II!1,Y1139~P!4) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).ErbB2(II!1,Y1139~P!4)    Gab1kp139
440 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).ErbB2(II!1,Y1139~P!4) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).ErbB2(II!1,Y1139~P!4)    Gab1kp140
441 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).ErbB2(II!1,Y1139~P!4) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).ErbB2(II!1,Y1139~P!4)    Gab1kp141
442 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).ErbB2(II!1,Y1139~P!4) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2r!4).ErbB2(II!1,Y1139~P!4)    Gab1kp142

# ErbB4-ErbB3 where ErbB4 transphosphorylates Gab1-Grb2-Shc
443 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3)    Gab1kp143
444 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3)	Gab1kp144
445 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3)    Gab1kp145
446 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB3(I_III!3,II!1,Y1328~P!4).HRG(EGFL!3)    Gab1kp146

# ErbB4-ErbB4 where ErbB4 transphosphorylates Gab1-Grb2-Shc
447 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3)    Gab1kp147
448 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3)	Gab1kp148
449 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3)    Gab1kp149
450 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1188~P!4).HRG(EGFL!3)    Gab1kp150

451 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y447~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3)    Gab1kp151
452 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y472~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3)	Gab1kp152
453 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y619~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3)    Gab1kp153
454 HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~O,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3) -> HRG(EGFL!5).ErbB4(I_III!5,II!1).Gab1(Y657~P,PRS1_PRS2!6).Grb2(cSH3!6,SH2s!2).p52Shc1(Y317~P!2,PTB!4).ErbB4(I_III!3,II!1,Y1242~P!4).HRG(EGFL!3)    Gab1kp154


#Gab1 Dissociation
455 Gab1(PRS1_PRS2!1).Grb2(cSH3!1) -> Gab1(PRS1_PRS2) + Grb2(cSH3)	Gab1kp155


#Phospho Erk and Gab1 interaction
#  ERK2 binds with Gab1
456 ERK2(STkinase,T185~P,Y187~P) + Gab1(T312~O) -> ERK2(STkinase!1,T185~P,Y187~P).Gab1(T312~O!1) Gab1kp156
457 ERK2(STkinase,T185~P,Y187~P) + Gab1(S381~O) -> ERK2(STkinase!1,T185~P,Y187~P).Gab1(S381~O!1) Gab1kp157
458 ERK2(STkinase,T185~P,Y187~P) + Gab1(S454~O) -> ERK2(STkinase!1,T185~P,Y187~P).Gab1(S454~O!1) Gab1kp158
459 ERK2(STkinase,T185~P,Y187~P) + Gab1(T476~O) -> ERK2(STkinase!1,T185~P,Y187~P).Gab1(T476~O!1) Gab1kp159
460 ERK2(STkinase,T185~P,Y187~P) + Gab1(S581~O) -> ERK2(STkinase!1,T185~P,Y187~P).Gab1(S581~O!1) Gab1kp160
461 ERK2(STkinase,T185~P,Y187~P) + Gab1(S597~O) -> ERK2(STkinase!1,T185~P,Y187~P).Gab1(S597~O!1) Gab1kp161

#ERK2 phosphorylates Gab1
462 ERK2(STkinase!1,T185~P,Y187~P).Gab1(T312~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).Gab1(T312~P!1)    Gab1kp162
463 ERK2(STkinase!1,T185~P,Y187~P).Gab1(S381~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).Gab1(S381~P!1)    Gab1kp163
464 ERK2(STkinase!1,T185~P,Y187~P).Gab1(S454~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).Gab1(S454~P!1)    Gab1kp164
465 ERK2(STkinase!1,T185~P,Y187~P).Gab1(T476~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).Gab1(T476~P!1)    Gab1kp165
466 ERK2(STkinase!1,T185~P,Y187~P).Gab1(S581~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).Gab1(S581~P!1)    Gab1kp166
467 ERK2(STkinase!1,T185~P,Y187~P).Gab1(S597~O!1) -> ERK2(STkinase!1,T185~P,Y187~P).Gab1(S597~P!1)    Gab1kp167

#Dissociation of ERK2 and phospho Gab1
468 ERK2(STkinase!1).Gab1(T312!1) -> ERK2(STkinase) + Gab1(T312)	Gab1kp168
469 ERK2(STkinase!1).Gab1(S381!1) -> ERK2(STkinase) + Gab1(S381)	Gab1kp168
470 ERK2(STkinase!1).Gab1(S454!1) -> ERK2(STkinase) + Gab1(S454)	Gab1kp168
471 ERK2(STkinase!1).Gab1(T476!1) -> ERK2(STkinase) + Gab1(T476)	Gab1kp168
472 ERK2(STkinase!1).Gab1(S581!1) -> ERK2(STkinase) + Gab1(S581)	Gab1kp168
473 ERK2(STkinase!1).Gab1(S597!1) -> ERK2(STkinase) + Gab1(S597)	Gab1kp168

#Intrinsic dephosphorylation of receptor phosphorylated Gab1 sites
474 Gab1(Y447~P) -> Gab1(Y447~O)	Gab1kp169
475 Gab1(Y472~P) -> Gab1(Y472~O)	Gab1kp169
476 Gab1(Y619~P) -> Gab1(Y619~O)	Gab1kp169
477 Gab1(Y657~P) -> Gab1(Y657~O)	Gab1kp169

#Intrinsic dephosphorylation of Erk2 phosphorylated Gab1 sites
478 Gab1(T312~P) -> Gab1(T312~O)	Gab1kp170
479 Gab1(S381~P) -> Gab1(S381~O)	Gab1kp170
480 Gab1(S454~P) -> Gab1(S454~O)	Gab1kp170
481 Gab1(T476~P) -> Gab1(T476~O)	Gab1kp170
482 Gab1(S581~P) -> Gab1(S581~O)	Gab1kp170
483 Gab1(S597~P) -> Gab1(S597~O)	Gab1kp170


#Gab1 binding to PIP3
484 Gab1(PH,PRS1_PRS2,S581~P) + PIP3(C3P,two~F) -> Gab1(PH!1,PRS1_PRS2,S581~P).PIP3(C3P!1,two~F)	Gab1kp171
485 Gab1(PH!1).PIP3(C3P!1) -> Gab1(PH) + PIP3(C3P) Gab1kp172

############## PI3K interactions ##############
# PI3K binds membrane localized Gab1-Grb2-Shc and Gab1-Grb2 at Y447,Y472, and Y619
# Y447
486 PI3K(G_p85_nSH2_cSH2,R_p85_nSH2_cSH2) + Gab1(Y447~P,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~O!2,PTB!+) -> PI3K(G_p85_nSH2_cSH2!3,R_p85_nSH2_cSH2).Gab1(Y447~P!3,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~O!2,PTB!+)     PI3Kkp1
487 PI3K(G_p85_nSH2_cSH2,R_p85_nSH2_cSH2) + Gab1(Y447~P,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+) -> PI3K(G_p85_nSH2_cSH2!2,R_p85_nSH2_cSH2).Gab1(Y447~P!2,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+)       PI3Kkp1

# Y472
488 PI3K(G_p85_nSH2_cSH2,R_p85_nSH2_cSH2) + Gab1(Y472~P,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~O!2,PTB!+) -> PI3K(G_p85_nSH2_cSH2!3,R_p85_nSH2_cSH2).Gab1(Y472~P!3,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~O!2,PTB!+)     PI3Kkp2
489 PI3K(G_p85_nSH2_cSH2,R_p85_nSH2_cSH2) + Gab1(Y472~P,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+) -> PI3K(G_p85_nSH2_cSH2!2,R_p85_nSH2_cSH2).Gab1(Y472~P!2,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+)       PI3Kkp2

# Y619
490 PI3K(G_p85_nSH2_cSH2,R_p85_nSH2_cSH2) + Gab1(Y619~P,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~O!2,PTB!+) -> PI3K(G_p85_nSH2_cSH2!3,R_p85_nSH2_cSH2).Gab1(Y619~P!3,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~O!2,PTB!+)     PI3Kkp3
491 PI3K(G_p85_nSH2_cSH2,R_p85_nSH2_cSH2) + Gab1(Y619~P,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+) -> PI3K(G_p85_nSH2_cSH2!2,R_p85_nSH2_cSH2).Gab1(Y619~P!2,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+)       PI3Kkp3

#PI3K binds membrane localized Gab1-PIP3
492 PI3K(G_p85_nSH2_cSH2,R_p85_nSH2_cSH2) + Gab1(PH!1,Y447~P,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?).PIP3(C3P!1) -> PI3K(G_p85_nSH2_cSH2!2,R_p85_nSH2_cSH2).Gab1(PH!1,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?,Y447~P!2).PIP3(C3P!1)	PI3Kkp1
493 PI3K(G_p85_nSH2_cSH2,R_p85_nSH2_cSH2) + Gab1(PH!1,Y472~P,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?).PIP3(C3P!1) -> PI3K(G_p85_nSH2_cSH2!2,R_p85_nSH2_cSH2).Gab1(PH!1,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?,Y472~P!2).PIP3(C3P!1)	PI3Kkp2
494 PI3K(G_p85_nSH2_cSH2,R_p85_nSH2_cSH2) + Gab1(PH!1,Y619~P,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?).PIP3(C3P!1) -> PI3K(G_p85_nSH2_cSH2!2,R_p85_nSH2_cSH2).Gab1(PH!1,T312~O!?,S381~O!?,S454~O!?,T476~O!?,S581~O!?,S597~O!?,Y619~P!2).PIP3(C3P!1)	PI3Kkp3

# PI3K dissasociation from Gab1
495 PI3K(G_p85_nSH2_cSH2!1).Gab1(Y447!1) -> PI3K(G_p85_nSH2_cSH2) + Gab1(Y447) 	PI3Kkp4
496 PI3K(G_p85_nSH2_cSH2!1).Gab1(Y472!1) -> PI3K(G_p85_nSH2_cSH2) + Gab1(Y472) 	PI3Kkp4
497 PI3K(G_p85_nSH2_cSH2!1).Gab1(Y619!1) -> PI3K(G_p85_nSH2_cSH2) + Gab1(Y619) 	PI3Kkp4

#membrane bound PI3K Binding to active Ras
498 PI3K(p110_RBD,G_p85_nSH2_cSH2!3).Gab1(Y447~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+) + KRas(g~GTP,GTPase) -> PI3K(p110_RBD!4,G_p85_nSH2_cSH2!3).Gab1(Y447~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+).KRas(g~GTP,GTPase!4) 	PI3Kkp5
499 PI3K(p110_RBD,G_p85_nSH2_cSH2!2).Gab1(Y447~P!2,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+) + KRas(g~GTP,GTPase) -> PI3K(G_p85_nSH2_cSH2!2,p110_RBD!4).Gab1(Y447~P!2,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+).KRas(g~GTP,GTPase!4)	PI3Kkp5

500 PI3K(p110_RBD,G_p85_nSH2_cSH2!3).Gab1(Y472~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+) + KRas(g~GTP,GTPase) -> PI3K(p110_RBD!4,G_p85_nSH2_cSH2!3).Gab1(Y472~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+).KRas(g~GTP,GTPase!4) 	PI3Kkp5
501 PI3K(p110_RBD,G_p85_nSH2_cSH2!2).Gab1(Y472~P!2,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+) + KRas(g~GTP,GTPase) -> PI3K(G_p85_nSH2_cSH2!2,p110_RBD!4).Gab1(Y472~P!2,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+).KRas(g~GTP,GTPase!4)	PI3Kkp5

502 PI3K(p110_RBD,G_p85_nSH2_cSH2!3).Gab1(Y619~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+) + KRas(g~GTP,GTPase) -> PI3K(p110_RBD!4,G_p85_nSH2_cSH2!3).Gab1(Y619~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+).KRas(g~GTP,GTPase!4) 	PI3Kkp5
503 PI3K(p110_RBD,G_p85_nSH2_cSH2!2).Gab1(Y619~P!2,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+) + KRas(g~GTP,GTPase) -> PI3K(G_p85_nSH2_cSH2!2,p110_RBD!4).Gab1(Y619~P!2,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+).KRas(g~GTP,GTPase!4)	PI3Kkp5


#PI3K Dissociation from Ras
504 PI3K(p110_RBD!1).KRas(GTPase!1) -> PI3K(p110_RBD) + KRas(GTPase)	PI3Kkp6


#PI3K binds to ErbB3
505 PI3K(R_p85_nSH2_cSH2,G_p85_nSH2_cSH2) + ErbB3(Y1054~P) <-> PI3K(R_p85_nSH2_cSH2!1,G_p85_nSH2_cSH2).ErbB3(Y1054~P!1)	PI3Kkp7,PI3Kkm7
506 PI3K(R_p85_nSH2_cSH2,G_p85_nSH2_cSH2) + ErbB3(Y1197~P) <-> PI3K(R_p85_nSH2_cSH2!1,G_p85_nSH2_cSH2).ErbB3(Y1197~P!1)	PI3Kkp8,PI3Kkm8
507 PI3K(R_p85_nSH2_cSH2,G_p85_nSH2_cSH2) + ErbB3(Y1222~P) <-> PI3K(R_p85_nSH2_cSH2!1,G_p85_nSH2_cSH2).ErbB3(Y1222~P!1)	PI3Kkp9,PI3Kkm9
508 PI3K(R_p85_nSH2_cSH2,G_p85_nSH2_cSH2) + ErbB3(Y1260~P) <-> PI3K(R_p85_nSH2_cSH2!1,G_p85_nSH2_cSH2).ErbB3(Y1260~P!1)	PI3Kkp10,PI3Kkm10
509 PI3K(R_p85_nSH2_cSH2,G_p85_nSH2_cSH2) + ErbB3(Y1276~P) <-> PI3K(R_p85_nSH2_cSH2!1,G_p85_nSH2_cSH2).ErbB3(Y1276~P!1)	PI3Kkp11,PI3Kkm11
510 PI3K(R_p85_nSH2_cSH2,G_p85_nSH2_cSH2) + ErbB3(Y1289~P) <-> PI3K(R_p85_nSH2_cSH2!1,G_p85_nSH2_cSH2).ErbB3(Y1289~P!1)	PI3Kkp12,PI3Kkm12

#PI3K binds to ErbB4
511 PI3K(R_p85_nSH2_cSH2,G_p85_nSH2_cSH2) + ErbB4(Y1056~P) <-> PI3K(R_p85_nSH2_cSH2!1,G_p85_nSH2_cSH2).ErbB4(Y1056~P!1)	PI3Kkp13,PI3Kkm13

############## PIP3 interactions ##############

#creation of PIP3 by active PI3K-Gab1~rec

512 PI3K(G_p85_nSH2_cSH2!3).Gab1(Y447~P!3,PRS1_PRS2!1,PH).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+) -> PIP3(C3P,two~F,loc~M) + PI3K(G_p85_nSH2_cSH2!3).Gab1(Y447~P!3,PRS1_PRS2!1,PH).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+) 	PIP3kp1
513 PI3K(G_p85_nSH2_cSH2!3).Gab1(Y472~P!3,PRS1_PRS2!1,PH).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+) -> PIP3(C3P,two~F,loc~M) + PI3K(G_p85_nSH2_cSH2!3).Gab1(Y472~P!3,PRS1_PRS2!1,PH).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+)	PIP3kp1
514 PI3K(G_p85_nSH2_cSH2!3).Gab1(Y619~P!3,PRS1_PRS2!1,PH).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+) -> PIP3(C3P,two~F,loc~M) + PI3K(G_p85_nSH2_cSH2!3).Gab1(Y619~P!3,PRS1_PRS2!1,PH).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+)	PIP3kp1

515 PI3K(G_p85_nSH2_cSH2!3).Gab1(Y447~P!3,PRS1_PRS2!1,PH).Grb2(cSH3!1,SH2r!+) -> PIP3(C3P,two~F,loc~M) + PI3K(G_p85_nSH2_cSH2!3).Gab1(Y447~P!3,PRS1_PRS2!1,PH).Grb2(cSH3!1,SH2r!+)	PIP3kp1
516 PI3K(G_p85_nSH2_cSH2!3).Gab1(Y472~P!3,PRS1_PRS2!1,PH).Grb2(cSH3!1,SH2r!+) -> PIP3(C3P,two~F,loc~M) + PI3K(G_p85_nSH2_cSH2!3).Gab1(Y472~P!3,PRS1_PRS2!1,PH).Grb2(cSH3!1,SH2r!+)	PIP3kp1
517 PI3K(G_p85_nSH2_cSH2!3).Gab1(Y619~P!3,PRS1_PRS2!1,PH).Grb2(cSH3!1,SH2r!+) -> PIP3(C3P,two~F,loc~M) + PI3K(G_p85_nSH2_cSH2!3).Gab1(Y619~P!3,PRS1_PRS2!1,PH).Grb2(cSH3!1,SH2r!+)	PIP3kp1

#With PI3K bound to Ras
518 PI3K(G_p85_nSH2_cSH2!3,p110_RBD!+).Gab1(Y447~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+) -> PIP3(C3P,two~F,loc~M) + PI3K(G_p85_nSH2_cSH2!3,p110_RBD!+).Gab1(Y447~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+)	PIP3kp1_5
519 PI3K(G_p85_nSH2_cSH2!3,p110_RBD!+).Gab1(Y472~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+) -> PIP3(C3P,two~F,loc~M) + PI3K(G_p85_nSH2_cSH2!3,p110_RBD!+).Gab1(Y472~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+)	PIP3kp1_5
520 PI3K(G_p85_nSH2_cSH2!3,p110_RBD!+).Gab1(Y619~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+) -> PIP3(C3P,two~F,loc~M) + PI3K(G_p85_nSH2_cSH2!3,p110_RBD!+).Gab1(Y619~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2s!2).p52Shc1(Y317~P!2,PTB!+)	PIP3kp1_5

521 PI3K(G_p85_nSH2_cSH2!3,p110_RBD!+).Gab1(Y447~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+) -> PIP3(C3P,two~F,loc~M) + PI3K(G_p85_nSH2_cSH2!3,p110_RBD!+).Gab1(Y447~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+)	PIP3kp1_5
522 PI3K(G_p85_nSH2_cSH2!3,p110_RBD!+).Gab1(Y472~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+) -> PIP3(C3P,two~F,loc~M) + PI3K(G_p85_nSH2_cSH2!3,p110_RBD!+).Gab1(Y472~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+)	PIP3kp1_5
523 PI3K(G_p85_nSH2_cSH2!3,p110_RBD!+).Gab1(Y619~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+) -> PIP3(C3P,two~F,loc~M) + PI3K(G_p85_nSH2_cSH2!3,p110_RBD!+).Gab1(Y619~P!3,PRS1_PRS2!1).Grb2(cSH3!1,SH2r!+)	PIP3kp1_5

#creation of PIP3 by PI3k-Gab1-PIP3
524 PI3K(G_p85_nSH2_cSH2!1).Gab1(Y447~P!1,PH!+) -> PIP3(C3P,two~F,loc~M) + PI3K(G_p85_nSH2_cSH2!1).Gab1(Y447~P!1,PH!+)	PIP3kp1
525 PI3K(G_p85_nSH2_cSH2!1).Gab1(Y472~P!1,PH!+) -> PIP3(C3P,two~F,loc~M) + PI3K(G_p85_nSH2_cSH2!1).Gab1(Y472~P!1,PH!+)	PIP3kp1
526 PI3K(G_p85_nSH2_cSH2!1).Gab1(Y619~P!1,PH!+) -> PIP3(C3P,two~F,loc~M) + PI3K(G_p85_nSH2_cSH2!1).Gab1(Y619~P!1,PH!+)	PIP3kp1

#creation of PIP3 by PI3K-ErbB3
527 PI3K(R_p85_nSH2_cSH2!+) -> PIP3(C3P,two~F,loc~M) + PI3K(R_p85_nSH2_cSH2!+)	PIP3kp1

#PIP3 dephosphorylation
528 PIP3(C3P,two~F) -> PIP3(C3P,two~T) PIP3kp3

############## AKT and CDK1 interactions ##############

#Akt1 binding to PIP3
529 Akt1(PH) + PIP3(C3P,two~F) <-> Akt1(PH!1).PIP3(C3P!1,two~F)         Akt1kp1,Akt1km1

#PDK1 binding to PIP3
530 PDK1(PH) + PIP3(C3P,two~F) <-> PDK1(PH!1).PIP3(C3P!1,two~F)		Akt1kp2,Akt1km2

#PDK1-PIP3 binds to AKT-PIP3
531 PDK1(PH!+,STkinase) + Akt1(PH!+,T308~O) -> PDK1(PH!+,STkinase!1).Akt1(PH!+,T308~O!1)		Akt1kp3

#phosphorylation of AKT-PIP3 by CDK1-PIP3
532 PDK1(PH!+,STkinase!1).Akt1(PH!+,T308~O!1) -> PDK1(PH!+,STkinase!1).Akt1(PH!+,T308~P!1)		Akt1kp4

533 PDK1(STkinase!1).Akt1(T308!1) -> PDK1(STkinase) + Akt1(T308)	Akt1kp5

# Phosphorylation of S473 by an unknown kinase, this only occurs when T308 is phosphorylated
534 Akt1(T308~P!?,S473~O) -> Akt1(T308~P!?,S473~P)		Akt1kp6

# Activated Akt-1 phosphorylates Raf-1 at S259
# This is an inhibitory feedback loop from the AKT pathway to the ERK pathway
535 Akt1(T308~P!?,S473~P,STkinase) + Raf1(S259~O) -> Akt1(T308~P!?,S473~P,STkinase!1).Raf1(S259~O!1)	Akt1kp7
536 Akt1(T308~P!?,S473~P,STkinase!1).Raf1(S259~O!1) -> Akt1(T308~P!?,S473~P,STkinase!1).Raf1(S259~P!1)	Akt1kp8
537 Akt1(STkinase!1).Raf1(S259!1) -> Akt1(STkinase) + Raf1(S259)	Akt1kp9

# Intrinsic dephosphorylation of phosphorylated residues on AKT
538 Raf1(S259~P) -> Raf1(S259~O)	Akt1kp10

539 Akt1(T308~P) -> Akt1(T308~O)		Akt1kp11

540 Akt1(S473~P) -> Akt1(S473~O)		Akt1kp12

############## p120RasGAP interactions ##############
541 p120RasGAP(nSH2) + EGFR(Y992~P) <-> p120RasGAP(nSH2!1).EGFR(Y992~P!1)	rGAPkp1,rGAPkm1
542 p120RasGAP(nSH2!+,GAP) + KRas(GTPase,g~GTP) -> p120RasGAP(nSH2!+,GAP!1).KRas(GTPase!1,g~GTP)	rGAPkp2
543 p120RasGAP(GAP!1).KRas(GTPase!1,g~GTP) -> p120RasGAP(GAP!1).KRas(GTPase!1,g~GDP)	rGAPkp3
544 p120RasGAP(GAP!1).KRas(GTPase!1) -> p120RasGAP(GAP) + KRas(GTPase)	rGAPkp4

end reaction rules

#ACTIONS
# 1. Run with this line uncommented to generate the opts file. Copy this file to the top level project folder
#    (if using RuleBender).
#visualize({type=>"opts"})
# 2. Now uncomment the next line to use the opts file.
#visualize({type=>"regulatory",groups=>1,collapse=>1,opts=>"../../../Creamer_2012_opts.txt",doNotUseContextWhenGrouping=>1})

begin actions
	simulate({method=>"nf",t_end=>10,n_steps=>20,gml=>2147483647})
end actions
